PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = -0.4000, -0.4000, -0.4000
  expName = lab1
  keyboardBackend = ioHub
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Routines
  Routine setup
    CodeComponent code_setup
      Code Type = Auto->JS
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      Begin Experiment:
        fix_time = .5
        fix_delay = .5
        stim_delay = .1

        trial_n = 5
        block_n = 6
        block_count = 1

        win.mouseVisible = False

        total_accuracy = [0] * 15
  Routine response
    CodeComponent accuracy_calc
      Code Type = Auto->JS
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      End Routine:
        total_accuracy[screen_refresh-1] += key_resp.corr
    TextComponent response_q
      color = -0.8000, -0.8000, -0.8000
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = ?
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    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4','5','6','7','8','9','0'
      correctAns = $stim_number
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine final
    CodeComponent code_end
      Code Type = Auto->JS
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      Begin Routine:
        msg = ''
        for i in range(15):
            msg += f"{round((i+1)*16.67, 1)} ms: {round(total_accuracy[i]/(trial_n*block_n), 2)}\n"
            thisExp.addData(f"{round((i+1)*16.67, 1)}ms accuracy", round(total_accuracy[i]/(trial_n*block_n), 2))
    TextComponent end_text1
      letterHeight = 0.05
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Results:
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    TextComponent end_text2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    TextComponent end_text3
      letterHeight = 0.05
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Record this result.

        Press SPACE when you are ready to end the experiment.
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 60
      store = nothing
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  Routine end_block
    CodeComponent block_message
      Code Type = Auto->JS
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      Begin Routine:
        block_msg = "You have reached the end of block " + str(block_count) + " of " + str(block_n) + "."
      End Routine:
        block_count = block_count + 1
    TextComponent block_message1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_msg
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    TextComponent block_message2
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please take a short break.

        Press SPACE when you are ready to continue.
    KeyboardComponent key_resp_block_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine presentation
    CodeComponent number_generator
      Code Type = Auto->JS
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      Begin Routine:
        stim_number = randint(0,10)
    PolygonComponent fixation
      fillColor = -0.8000, -0.8000, -0.8000
      lineColor = -0.8000, -0.8000, -0.8000
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = $fix_delay
      stopVal [duration (s)] = $fix_time
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    TextComponent presented_number
      color = -0.3800, -0.3800, -0.3800
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = $fix_time+fix_delay+stim_delay
      stopVal [duration (frames)] = $screen_refresh
      text [set every repeat] = $stim_number
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  Routine instructions
    TextComponent instruct_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        During this experiment, you will see a number presented in the center of the screen. Your job is to identify the number you saw. The numbers will be presented very quickly and might be difficult to see.

        During the trial, you will first see a cross in the center of the screen. This is your warning that the number is about to appear and that you should get ready. Next, a number 0-9 will appear in the center of the screen. It will stay on the screen for a very short amount of time. You will then see a question mark. When you see the question mark, press the number button to indicate which number you just saw. The trial will then start over again.

        Let's try a few practice trials.

        Press SPACE to begin the practice.
    KeyboardComponent key_resp_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_prac.corr == 1:
            feedback_msg = "That was correct!"
        else:
            feedback_msg = "That was incorrect. The correct answer was " + str(stim_number) + "."
    TextComponent feedback_text1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_msg
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    TextComponent feedback_text2
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp_feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine response_practice
    KeyboardComponent key_resp_prac
      allowedKeys = '1','2','3','4','5','6','7','8','9','0'
      correctAns = $stim_number
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent response_prac
      color = -0.8000, -0.8000, -0.8000
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = ?
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  Routine end_practice
    TextComponent end_practice_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished the practice!

        Now it's time to begin the real experimental trials. These will be exactly the same as what you just practiced, but you will no longer receive feedback.

        You will see a screen encouraging you to take a break at several times during the experiment. When you have completed all trials, you will see your accuracy results. Record these results and report them to your instructor.

        If you have any questions, please ask your instructor now.

        Press SPACE when you are ready to begin.
    KeyboardComponent key_resp_end_prac
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = nothing
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Flow
  Routine setup
  Routine instructions
  LoopInitiator trials_practice loopType="TrialHandler"
    conditionsFile = screen.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('screen_refresh', 1)]),
      OrderedDict([('screen_refresh', 2)]),
      OrderedDict([('screen_refresh', 3)]),
      OrderedDict([('screen_refresh', 4)]),
      OrderedDict([('screen_refresh', 5)]),
      OrderedDict([('screen_refresh', 6)]),
      OrderedDict([('screen_refresh', 7)]),
      OrderedDict([('screen_refresh', 8)]),
      OrderedDict([('screen_refresh', 9)]),
      OrderedDict([('screen_refresh', 10)]),
      OrderedDict([('screen_refresh', 11)]),
      OrderedDict([('screen_refresh', 12)]),
      OrderedDict([('screen_refresh', 13)]),
      OrderedDict([('screen_refresh', 14)]),
      OrderedDict([('screen_refresh', 15)])]
    Routine presentation
    Routine response_practice
    Routine feedback
  LoopTerminator trials_practice
  Routine end_practice
  LoopInitiator block loopType="TrialHandler"
    loopType = random
    nReps = block_n
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = screen.csv
      loopType = random
      nReps = trial_n
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      conditions:
        [OrderedDict([('screen_refresh', 1)]),
        OrderedDict([('screen_refresh', 2)]),
        OrderedDict([('screen_refresh', 3)]),
        OrderedDict([('screen_refresh', 4)]),
        OrderedDict([('screen_refresh', 5)]),
        OrderedDict([('screen_refresh', 6)]),
        OrderedDict([('screen_refresh', 7)]),
        OrderedDict([('screen_refresh', 8)]),
        OrderedDict([('screen_refresh', 9)]),
        OrderedDict([('screen_refresh', 10)]),
        OrderedDict([('screen_refresh', 11)]),
        OrderedDict([('screen_refresh', 12)]),
        OrderedDict([('screen_refresh', 13)]),
        OrderedDict([('screen_refresh', 14)]),
        OrderedDict([('screen_refresh', 15)])]
      Routine presentation
      Routine response
    LoopTerminator trials
    Routine end_block
  LoopTerminator block
  Routine final
