PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.1.4
  Window size (pixels) = [1440, 900]
  expName = lab2
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code_presentation
      Code Type = Auto->JS
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      Begin Routine:
        target_word = word_stims[i]
        lure_word = word_stims[i+1]
      End Routine:
        i = i+2
    TextComponent stimuli_presentation
      letterHeight = 0.05
      opacity = .1
      saveStartStop = False
      startVal [frame N] = $delay_duration
      stopVal [duration (frames)] = $stim_duration
      text [set every repeat] = $target_word[0]
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  Routine setup
    CodeComponent code_setup
      Code Type = Auto->JS
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      Begin Experiment:
        word_stims = []
        i = 0
        trial_n = 5
        block_n = 6
        block_count = 1
        acc_sum = 0

        positions = [(.25, 0), (-.25, 0)]

        fix_time = .5
        mask_duration = .2
        stim_duration = 2 # frames

        total_accuracy_1 = [0]
        total_accuracy_4 = [0] * 8

        win.mouseVisible = False
      Begin Routine:
        word_stims.append([word_stim])
  Routine response
    CodeComponent code_response
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(positions)

        position_target = positions[0]
        position_lure = positions[1]

        if position_target[0] > 0:
            corr_ans = "right"
        else:
            corr_ans = "left"
      End Routine:
        if mask_type == "none":
            total_accuracy_1[0] += key_resp.corr
        else:
            total_accuracy_4[delay_cond-1] += key_resp.corr
    TextComponent text_target
      letterHeight = 0.05
      pos [set every repeat] = position_target
      saveStartStop = False
      startVal [frame N] = $42-delay_duration
      text [set every repeat] = $target_word[0]
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    TextComponent text_lure
      letterHeight = 0.05
      pos [set every repeat] = position_lure
      saveStartStop = False
      startVal [frame N] = $42-delay_duration
      text [set every repeat] = $lure_word[0]
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    KeyboardComponent key_resp
      allowedKeys = 'right', 'left'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine results
  Routine final
    CodeComponent code_end
      Code Type = Auto->JS
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      Begin Routine:
        delays = [0,2,3,5,6,9,12,15]
        msg = ''
        msg_1 = '\nNo mask\n'
        msg_2 = 'Both masks\n'
        for i in range(8):
            msg_2 += f"{round((delays[i])*16.67)} ms: {round(total_accuracy_4[i]/(trial_n*block_n), 2)}\n"
            thisExp.addData(f"both mask {round((delays[i])*16.67)}ms accuracy", round(total_accuracy_4[i]/(trial_n*block_n), 2))


        msg_1 += f"{round(total_accuracy_1[0]/(trial_n*block_n), 2)}\n"

        msg = msg_2 + msg_1
        thisExp.addData(f"no mask accuracy", round(acc_sum/8, 2))
    TextComponent end_text
      letterHeight = 0.05
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Results:
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    TextComponent end_text_2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    TextComponent end_text_3
      letterHeight = 0.05
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Record this result.

        Press SPACE when you are ready to end the experiment.
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 120
      store = nothing
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  Routine fixation
    PolygonComponent fixation_stim
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fix_time
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  Routine mask_before
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if mask_type == "both":
            mask_display = 1
        else:
            mask_display = 0
    TextComponent text_mask_before
      letterHeight = 0.05
      opacity [set every repeat] = mask_display
      startVal [time (s)] = 0
      stopVal [duration (s)] = $mask_duration
      text [set every repeat] = #$%&@&$
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  Routine mask_after
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if mask_type == "both":
            mask_display = 1
        else:
            mask_display = 0
    TextComponent text_mask_after
      letterHeight = 0.05
      opacity [set every repeat] = mask_display
      startVal [frame N] = $delay_duration
      stopVal [duration (s)] = $mask_duration
      text [set every repeat] = #$%&@&$
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  Routine instructions
    TextComponent instruct_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        During this experiment, you will see a word presented in the center of the screen. Your job is to identify the word you saw. The words will be presented very quickly and might be difficult to see.

        During the trial, you will first see a cross in the center of the screen. This is your warning that the number is about to appear and that you should get ready. Next, you may see a group of symbols before a word appears in the center of the screen. It will stay on the screen for a very short amount of time. You may then see the symbols again. Finally, you will see two words presented on the screen, one of which you just saw. If you believe that you just saw the word on the LEFT side of the screen, press the LEFT arrow key. If you believe that you just saw the word on the RIGHT side of the screen, press the RIGHT arrow key.  The trial will then start over again.

        Let's try a few practice trials.

        Press SPACE to begin the practice.
    KeyboardComponent key_resp_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine response_practice
    CodeComponent code_response_prac
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(positions)

        position_target = positions[0]
        position_lure = positions[1]

        if position_target[0] > 0:
            corr_ans = "right"
        else:
            corr_ans = "left"
      End Routine:
        thisExp.addData("word_presented", target_word)
    TextComponent text_target_prac
      letterHeight = 0.05
      pos [set every repeat] = position_target
      saveStartStop = False
      startVal [frame N] = $42-delay_duration
      text [set every repeat] = $target_word[0]
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    TextComponent text_lure_prac
      letterHeight = 0.05
      pos [set every repeat] = position_lure
      saveStartStop = False
      startVal [frame N] = $42-delay_duration
      text [set every repeat] = $lure_word[0]
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    KeyboardComponent key_resp_prac
      allowedKeys = 'right', 'left'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_prac.corr == 1:
            feedback_msg = "That was correct!"
        else:
            feedback_msg = "That was incorrect. The correct answer was " + corr_ans.upper() + "."
    TextComponent feedback_text1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_msg
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    TextComponent feedback_text2
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp_feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_practice
    TextComponent end_practice_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished the practice!

        Now it's time to begin the real experimental trials. These will be exactly the same as what you just practiced, but you will no longer receive feedback.

        You will see a screen encouraging you to take a break at several times during the experiment. When you have completed all trials, you will see your accuracy results. Record these results and report them to your instructor.

        If you have any questions, please ask your instructor now.

        Press SPACE when you are ready to begin.
    KeyboardComponent key_resp_end_prac
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = nothing
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  Routine end_block
    CodeComponent block_message
      Code Type = Auto->JS
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      Begin Routine:
        block_msg = "You have reached the end of block " + str(block_count) + " of " + str(block_n) + "."
      End Routine:
        block_count = block_count + 1
    TextComponent block_message1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_msg
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    TextComponent block_message2
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please take a short break.

        Press SPACE when you are ready to continue.
    KeyboardComponent key_resp_block_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator setup_loop loopType="TrialHandler"
    conditionsFile = words_text.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word_stim', 'STAIN')]),
      OrderedDict([('word_stim', 'QUEEN')]),
      OrderedDict([('word_stim', 'JUICE')]),
      OrderedDict([('word_stim', 'CANDY')]),
      OrderedDict([('word_stim', 'BASS')]),
      OrderedDict([('word_stim', 'SODA')]),
      OrderedDict([('word_stim', 'POSTER')]),
      OrderedDict([('word_stim', 'WAIST')]),
      OrderedDict([('word_stim', 'SPEAR')]),
      OrderedDict([('word_stim', 'CAROL')]),
      OrderedDict([('word_stim', 'HEAP')]),
      OrderedDict([('word_stim', 'PARK')]),
      OrderedDict([('word_stim', 'UNCLE')]),
      OrderedDict([('word_stim', 'CAPE')]),
      OrderedDict([('word_stim', 'BOSS')]),
      OrderedDict([('word_stim', 'SOIL')]),
      OrderedDict([('word_stim', 'MIRROR')]),
      OrderedDict([('word_stim', 'SLAP')]),
      OrderedDict([('word_stim', 'KING')]),
      OrderedDict([('word_stim', 'FIRE')]),
      OrderedDict([('word_stim', 'BREAD')]),
      OrderedDict([('word_stim', 'TUNNEL')]),
      OrderedDict([('word_stim', 'HAIR')]),
      OrderedDict([('word_stim', 'BIRCH')]),
      OrderedDict([('word_stim', 'CAGE')]),
      OrderedDict([('word_stim', 'HOTEL')]),
      OrderedDict([('word_stim', 'SACK')]),
      OrderedDict([('word_stim', 'GRAPE')]),
      OrderedDict([('word_stim', 'FLAME')]),
      OrderedDict([('word_stim', 'CEREAL')]),
      OrderedDict([('word_stim', 'TROUT')]),
      OrderedDict([('word_stim', 'DIAL')]),
      OrderedDict([('word_stim', 'SCALE')]),
      OrderedDict([('word_stim', 'MARKET')]),
      OrderedDict([('word_stim', 'BEACH')]),
      OrderedDict([('word_stim', 'DRIVER')]),
      OrderedDict([('word_stim', 'SLUSH')]),
      OrderedDict([('word_stim', 'GLASS')]),
      OrderedDict([('word_stim', 'PILE')]),
      OrderedDict([('word_stim', 'PEST')])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
    Routine setup
  LoopTerminator setup_loop
  Routine instructions
  LoopInitiator trials_practice loopType="TrialHandler"
    conditionsFile = delay_conds_prac.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('mask_type', 'none'), ('delay_duration', 3)]),
      OrderedDict([('mask_type', 'none'), ('delay_duration', 6)]),
      OrderedDict([('mask_type', 'both'), ('delay_duration', 12)]),
      OrderedDict([('mask_type', 'both'), ('delay_duration', 15)])]
    Routine fixation
    Routine mask_before
    Routine trial
    Routine mask_after
    Routine response_practice
    Routine feedback
  LoopTerminator trials_practice
  Routine end_practice
  LoopInitiator block loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = block_n
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = delay_conds.csv
      loopType = random
      nReps = trial_n
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      conditions:
        [OrderedDict([('mask_type', 'none'), ('delay_cond', 1), ('delay_duration', 0)]),
        OrderedDict([('mask_type', 'both'), ('delay_cond', 1), ('delay_duration', 0)]),
        OrderedDict([('mask_type', 'both'), ('delay_cond', 2), ('delay_duration', 2)]),
        OrderedDict([('mask_type', 'both'), ('delay_cond', 3), ('delay_duration', 3)]),
        OrderedDict([('mask_type', 'both'), ('delay_cond', 4), ('delay_duration', 4)]),
        OrderedDict([('mask_type', 'both'), ('delay_cond', 5), ('delay_duration', 6)]),
        OrderedDict([('mask_type', 'both'), ('delay_cond', 6), ('delay_duration', 9)]),
        OrderedDict([('mask_type', 'both'), ('delay_cond', 7), ('delay_duration', 12)]),
        OrderedDict([('mask_type', 'both'), ('delay_cond', 8), ('delay_duration', 15)])]
      Routine fixation
      Routine mask_before
      Routine trial
      Routine mask_after
      Routine response
    LoopTerminator trials
    Routine end_block
  LoopTerminator block
  Routine final
