PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1440, 900]
  color = 0.0000, 0.0000, 0.0000
  expName = lab3
  keyboardBackend = ioHub
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Routines
  Routine setup
    CodeComponent code_setup
      Code Type = Auto->JS
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      Begin Experiment:
        import string
        import random

        fix_time = .5
        stim_size_start = .005
        stim_duration = 20 # frames
        fix_display = 0

        trial_n = 1000
        block_count = 1
        acc_count = 0
        position = (0,0)
        i = 0

        win.mouseVisible = False

        total_accuracy = [0] * 11
        all_positions = [0] * 11
  Routine response
    CodeComponent response_code
      Code Type = Auto->JS
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      End Routine:
        if key_resp.corr == 1:
            acc_count += 1
        else:
            stim_size += .005
            acc_count = 0

        if acc_count == 3:
            trials.finished = True
            total_accuracy[i] = [x_val, round(stim_size, 3)]
            i += 1
    TextComponent response_q
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = ?
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    KeyboardComponent key_resp
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z'
      correctAns = $stim_letter.lower()
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine final
    CodeComponent code_end
      Code Type = Auto->JS
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      Begin Routine:
        for i in range(11):
            thisExp.addData(f"{total_accuracy[i][0]} position font size", total_accuracy[i][1])
    TextComponent end_text
      letterHeight = 0.05
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Results:
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    TextComponent end_text1
      letterHeight [set every repeat] = total_accuracy[0][1]
      pos [set every repeat] = (total_accuracy[0][0], 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $total_accuracy[0][1]
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    TextComponent end_text2
      letterHeight [set every repeat] = total_accuracy[1][1]
      pos [set every repeat] = (total_accuracy[1][0], 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $total_accuracy[1][1]
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    TextComponent end_text3
      letterHeight [set every repeat] = total_accuracy[2][1]
      pos [set every repeat] = (total_accuracy[2][0], 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $total_accuracy[2][1]
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    TextComponent end_text4
      letterHeight [set every repeat] = total_accuracy[3][1]
      pos [set every repeat] = (total_accuracy[3][0], 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $total_accuracy[3][1]
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    TextComponent end_text5
      letterHeight [set every repeat] = total_accuracy[4][1]
      pos [set every repeat] = (total_accuracy[4][0], 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $total_accuracy[4][1]
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    TextComponent end_text6
      letterHeight [set every repeat] = total_accuracy[5][1]
      pos [set every repeat] = (total_accuracy[5][0], 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $total_accuracy[5][1]
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    TextComponent end_text7
      letterHeight [set every repeat] = total_accuracy[6][1]
      pos [set every repeat] = (total_accuracy[6][0], 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $total_accuracy[6][1]
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    TextComponent end_text8
      letterHeight [set every repeat] = total_accuracy[7][1]
      pos [set every repeat] = (total_accuracy[7][0], 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $total_accuracy[7][1]
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    TextComponent end_text9
      letterHeight [set every repeat] = total_accuracy[8][1]
      pos [set every repeat] = (total_accuracy[8][0], 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $total_accuracy[8][1]
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    TextComponent end_text10
      letterHeight [set every repeat] = total_accuracy[9][1]
      pos [set every repeat] = (total_accuracy[9][0], 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $total_accuracy[9][1]
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    TextComponent end_text11
      letterHeight [set every repeat] = total_accuracy[10][1]
      pos [set every repeat] = (total_accuracy[10][0], 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $total_accuracy[10][1]
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    TextComponent end_text12
      letterHeight = 0.05
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Record this result.

        Press SPACE when you are ready to end the experiment.
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 60
      store = nothing
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  Routine end_block
    CodeComponent block_message
      Code Type = Auto->JS
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      Begin Routine:
        block_msg = "You have reached the end of block " + str(block_count) + " of 11."
      End Routine:
        block_count = block_count + 1
    TextComponent block_message1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_msg
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    TextComponent block_message2
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please take a short break.

        Press SPACE when you are ready to continue.
    KeyboardComponent key_resp_block_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine presentation
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        stim_letter = random.choice(string.ascii_uppercase)

        position = (x_val, 0)

        if x_val == 0:
            fix_display = 0
        else:
            fix_display = 1
    TextComponent fix_cross
      letterHeight = 0.15
      opacity [set every repeat] = fix_display
      saveStartStop = False
      startVal [time (s)] = .1
      stopVal [duration (frames)] = 20
      text = +
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    TextComponent presented_letter
      letterHeight [set every repeat] = stim_size
      pos [set every repeat] = position
      saveStartStop = False
      startVal [time (s)] = .1
      stopVal [duration (frames)] = $stim_duration
      text [set every repeat] = $stim_letter
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  Routine instructions
    TextComponent instruct_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        During this experiment, you will see a letter presented on the screen at different positions. Your job is to identify the letter you saw. The letter will be presented very quickly and might be difficult to see.

        During the trial, you will first see a cross in the center of the screen. When you are ready to start the trial, press SPACE. Next, a letter will appear on the screen. It will stay on the screen for a very short amount of time. You will then see a question mark. When you see the question mark, press the letter key to indicate which letter you just saw.

        If your response is incorrect, the letter will increase in size. When you correctly respond 3 times in a row, the position of the letter will change.

        During the trial, keep your eyes focused on the center of the screen where the cross first appears.

        Let's try a few practice trials.

        Press SPACE to begin the practice.
    KeyboardComponent key_resp_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_prac.corr == 1:
            feedback_msg = "That was correct!"
        else:
            feedback_msg = "That was incorrect. The correct answer was " + stim_letter + "."
    TextComponent feedback_text1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_msg
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    TextComponent feedback_text2
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp_feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine response_practice
    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        if key_resp_prac.corr == 1:
            acc_count += 1
        else:
            stim_size += .005
            acc_count = 0

        if acc_count == 3:
            trials_3.finished = True
    KeyboardComponent key_resp_prac
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z'
      correctAns = $stim_letter.lower()
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent response_q_prac
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = ?
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  Routine end_practice
    TextComponent end_practice_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished the practice!

        Now it's time to begin the real experimental trials. These will be exactly the same as what you just practiced, but you will no longer receive feedback.

        You will see a screen encouraging you to take a break at several times during the experiment. When you have completed all trials, you will see your results. Record these results and report them to your instructor.

        If you have any questions, please ask your instructor now.

        Press SPACE when you are ready to begin.
    KeyboardComponent key_resp_end_prac
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = nothing
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  Routine loop_start
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        acc_count = 0
        stim_size = stim_size_start
  Routine get_ready
    KeyboardComponent key_resp_start_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent fix_cross_2
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0
      text = +
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text = Press SPACE when ready.
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Flow
  Routine setup
  Routine instructions
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = coord_cond_practice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'x_val': 0},
      {'x_val': 0.1},
      {'x_val': -0.1}]
    Routine loop_start
    LoopInitiator trials_3 loopType="TrialHandler"
      loopType = sequential
      nReps = trial_n
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      Routine get_ready
      Routine presentation
      Routine response_practice
      Routine feedback
    LoopTerminator trials_3
  LoopTerminator trials_4
  Routine end_practice
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = coord_cond.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'x_val': 0},
      {'x_val': 0.1},
      {'x_val': -0.1},
      {'x_val': 0.2},
      {'x_val': -0.2},
      {'x_val': 0.4},
      {'x_val': -0.4},
      {'x_val': 0.6},
      {'x_val': -0.6},
      {'x_val': 0.8},
      {'x_val': -0.8}]
    Routine loop_start
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = trial_n
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      Routine get_ready
      Routine presentation
      Routine response
    LoopTerminator trials
    Routine end_block
  LoopTerminator trials_2
  Routine final
