PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.1.4
  Window size (pixels) = [1440, 900]
  color = 1.0000, 1.0000, 1.0000
  expName = lab4
  keyboardBackend = ioHub
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Routines
  Routine setup
    CodeComponent code_setup
      Code Type = Auto->JS
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      Begin Experiment:
        import colorsys
        import math
        import re

        circle_size = (0.2, 0.2)
        dot_size = (0.05, 0.05)
        dot_pos_resp = [0,0]
        fix_time = .5
        block_n = 1
        trial_n = 6
        block_total = 4
        trial_total = 1
        i = 0

        def scalar_to_rgb(scalar):
            color_list = colorsys.hsv_to_rgb(scalar, 1, 1)
            color_list = [element for element in color_list]
            return color_list

        win.mouseVisible = False

        error_rgb = [0]*6
        error_hsv = [0]*6
  Routine practice_end
    TextComponent end_practice_text
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished the practice!

        Now it's time to begin the real experimental trials. These will be exactly the same as what you just practiced, but you will no longer receive feedback.

        You will see a screen encouraging you to take a break at several times during the experiment. When you have completed all trials, you will see your accuracy results. Record these results and report them to your instructor.

        If you have any questions, please ask your instructor now.

        Press SPACE when you are ready to begin.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_rgb
    MouseComponent mouse_resp_perc
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        mouse_resp_perc.getPos()
        mouse_resp_perc.setPos([0.25, 0])
        current_pos = mouse_resp_perc.setPos([0.25, 0])

        if color_category == "red":
            angles = list(range(1,21)) + list(range(326, 361))
        elif color_category == "orange":
            angles = list(range(21,51))
        elif color_category == "yellow":
            angles = list(range(51,76))
        elif color_category == "green":
            angles = list(range(76,166))
        elif color_category == "blue":
            angles = list(range(166,261))
        elif color_category == "purple":
            angles = list(range(261,325))

        shuffle(angles)
        trial_angles = [angles[0]]

        stim_color = scalar_to_rgb(trial_angles[0]/360)

        win.mouseVisible = True
      Each Frame:
        mouse_x = mouse_resp_perc.getPos()[0]
        mouse_y = mouse_resp_perc.getPos()[1]
        adj_x = 0.25
        adj_y = 0

        mouse_x = mouse_x-(adj_x)
        mouse_y = mouse_y-(adj_y)
        r = np.linalg.norm([mouse_x,mouse_y])
        current_pos = [(mouse_x),(mouse_y)]

        cterm = [0, (- 50)];
        if (r == 0):
            theta = 0;
        elif (r != 0):
            theta = math.acos(np.dot(current_pos, cterm) / (r * -50))
        if (mouse_x < 0):
            theta = ((2 * pi) - theta)

        curr_angle = round(theta*(180/pi))

        dot_pos_resp = [(0.25 + ((circle_size[0] / 2) * sin(theta))),
            (0 + ((circle_size[0] / 2) * cos(theta)))]

        color_rgb = scalar_to_rgb(curr_angle/360)

        if (all(current_pos) != all([0.25,0.0])) & (mouse_resp_perc.getPressed() != [0, 0, 0]):
            continueRoutine = False
      End Routine:
        thisExp.addData('disp_angle', trial_angles[0])
        thisExp.addData('resp_angle', curr_angle)
        thisExp.addData('block_n', block_n)
        thisExp.addData('trial_n', trial_n)

        err_angle = (trial_angles[0] - curr_angle + 360) % 360
        if (err_angle > 180):
            err_angle = 360 - err_angle

        thisExp.addData('err_angle_rgb', err_angle)

        error_rgb[color_condition-1] += err_angle
        i += 1

        win.mouseVisible = False
        display_warning = 0
    PolygonComponent circle_target
      fillColor [set every repeat] = $stim_color
      lineColor [set every repeat] = $stim_color
      pos = (-.25, 0)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent dot_resp1_8
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      nVertices = 75
      pos [set every frame] = dot_pos_resp
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = dot_size
      startVal [condition] = all(current_pos) != all([0.0,0.0])
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    PolygonComponent circle_response
      fillColor [set every frame] = $color_rgb
      lineColor [set every frame] = $color_rgb
      pos = (.25, 0)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent circle_response_gray
      fillColor [set every frame] = gray
      lineColor [set every frame] = gray
      pos = (.25, 0)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [condition] = all(current_pos) != all([0.25,0.0])
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    PolygonComponent circle_resp_8
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      pos = [.25,0]
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = 0
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  Routine trial_hsv
    MouseComponent mouse_resp_perc_2
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        mouse_resp_perc_2.getPos()
        mouse_resp_perc_2.setPos([0.25, 0])
        current_pos = mouse_resp_perc_2.setPos([0.25, 0])

        if color_category == "red":
            angles = list(range(1,21)) + list(range(326, 361))
        elif color_category == "orange":
            angles = list(range(21,51))
        elif color_category == "yellow":
            angles = list(range(51,76))
        elif color_category == "green":
            angles = list(range(76,166))
        elif color_category == "blue":
            angles = list(range(166,261))
        elif color_category == "purple":
            angles = list(range(261,325))

        shuffle(angles)

        trial_angles = [angles[0]]
        err_total = 0

        stim_color = (trial_angles[0], 1, 1)

        win.mouseVisible = True
      Each Frame:
        mouse_x = mouse_resp_perc_2.getPos()[0]
        mouse_y = mouse_resp_perc_2.getPos()[1]
        adj_x = 0.25
        adj_y = 0

        mouse_x = mouse_x-(adj_x)
        mouse_y = mouse_y-(adj_y)
        r = np.linalg.norm([mouse_x,mouse_y])
        current_pos = [(mouse_x),(mouse_y)]

        cterm = [0, (- 50)];
        if (r == 0):
            theta = 0;
        elif (r != 0):
            theta = math.acos(np.dot(current_pos, cterm) / (r * -50))
        if (mouse_x < 0):
            theta = ((2 * pi) - theta)

        curr_angle = round(theta*(180/pi))

        dot_pos_resp = [(0.25 + ((circle_size[0] / 2) * sin(theta))),
            (0 + ((circle_size[0] / 2) * cos(theta)))]

        color_hsv = (curr_angle, 1, 1)

        if (all(current_pos) != all([0.25,0.0])) & (mouse_resp_perc_2.getPressed() != [0, 0, 0]):
            continueRoutine = False
      End Routine:
        thisExp.addData('disp_angle', trial_angles[0])
        thisExp.addData('resp_angle', curr_angle)
        thisExp.addData('block_n', block_n)
        thisExp.addData('trial_n', trial_n)

        err_angle = (trial_angles[0] - curr_angle + 360) % 360
        if (err_angle > 180):
            err_angle = 360 - err_angle

        thisExp.addData('err_angle_hsv', err_angle)


        error_hsv[color_condition-1] += err_angle
        i += 1

        win.mouseVisible = False
    PolygonComponent circle_target_2
      colorSpace = hsv
      fillColor [set every repeat] = $stim_color
      lineColor [set every repeat] = $stim_color
      pos = (-.25, 0)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent dot_resp1
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      nVertices = 75
      pos [set every frame] = dot_pos_resp
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = dot_size
      startVal [condition] = all(current_pos) != all([0.0,0.0])
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    PolygonComponent circle_response_2
      colorSpace = hsv
      fillColor [set every frame] = $color_hsv
      lineColor [set every frame] = $color_hsv
      pos = (.25, 0)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent circle_response_gray_2
      fillColor [set every frame] = gray
      lineColor [set every frame] = gray
      pos = (.25, 0)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [condition] = all(current_pos) != all([0.25,0.0])
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    PolygonComponent circle_resp
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      pos = [.25,0]
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = 0
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  Routine final
    CodeComponent code_end
      Code Type = Auto->JS
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      Begin Routine:
        msg_1 = 'Color Space 1 Mean Error:\n\n'
        msg_2 = 'Color Space 2 Mean Error:\n\n'

        colors = ["RED", "ORANGE", "YELLOW", "GREEN", "BLUE", "PURPLE"]

        for i in range(6):
            msg_1 += f"{colors[i]}: {round(error_rgb[i]/(trial_n*block_total), 2)}\n"
            thisExp.addData(f"{colors[i]} error rgb", round(error_rgb[i]/(trial_n*block_total), 2))

        for i in range(6):
            msg_2 += f"{colors[i]}: {round(error_hsv[i]/(trial_n*block_total), 2)}\n"
            thisExp.addData(f"{colors[i]} error hsv", round(error_hsv[i]/(trial_n*block_total), 2))
    TextComponent end_text1
      color = black
      letterHeight = 0.05
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Results:
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    TextComponent end_text2
      color = black
      letterHeight = 0.03
      pos = (-.25, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_1
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    TextComponent end_text3
      color = black
      letterHeight = 0.03
      pos = (.25, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_2
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    TextComponent end_text4
      color = black
      letterHeight = 0.05
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Record this result.

        Press SPACE when you are ready to end the experiment.
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 60
      store = nothing
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  Routine end_block
    CodeComponent block_message_2
      Code Type = Auto->JS
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      Begin Routine:
        block_msg = "You have reached the end of block " + str(block_n) + " of " + str(block_total*2) + "."

        i = 0
      End Routine:
        block_n += 1
    TextComponent block_message1_2
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_msg
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    TextComponent block_message2_2
      color = black
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please take a short break.

        Press SPACE when you are ready to continue.
    KeyboardComponent key_resp_block_cont_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_rgb_practice
    MouseComponent mouse_resp_perc_3
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        mouse_resp_perc.getPos()
        mouse_resp_perc.setPos([0.25, 0])
        current_pos = mouse_resp_perc.setPos([0.25, 0])

        if color_category == "red":
            angles = list(range(1,21)) + list(range(326, 361))
        elif color_category == "orange":
            angles = list(range(21,51))
        elif color_category == "yellow":
            angles = list(range(51,76))
        elif color_category == "green":
            angles = list(range(76,166))
        elif color_category == "blue":
            angles = list(range(166,261))
        elif color_category == "purple":
            angles = list(range(261,325))

        shuffle(angles)
        trial_angles = [angles[0]]

        stim_color = scalar_to_rgb(trial_angles[0]/360)

        win.mouseVisible = True
      Each Frame:
        mouse_x = mouse_resp_perc_3.getPos()[0]
        mouse_y = mouse_resp_perc_3.getPos()[1]
        adj_x = 0.25
        adj_y = 0

        mouse_x = mouse_x-(adj_x)
        mouse_y = mouse_y-(adj_y)
        r = np.linalg.norm([mouse_x,mouse_y])
        current_pos = [(mouse_x),(mouse_y)]

        cterm = [0, (- 50)];
        if (r == 0):
            theta = 0;
        elif (r != 0):
            theta = math.acos(np.dot(current_pos, cterm) / (r * -50))
        if (mouse_x < 0):
            theta = ((2 * pi) - theta)

        curr_angle = round(theta*(180/pi))

        dot_pos_resp = [(0.25 + ((circle_size[0] / 2) * sin(theta))),
            (0 + ((circle_size[0] / 2) * cos(theta)))]

        color_rgb = scalar_to_rgb(curr_angle/360)

        if (all(current_pos) != all([0.25,0.0])) & (mouse_resp_perc_3.getPressed() != [0, 0, 0]):
            continueRoutine = False
      End Routine:
        err_angle = (trial_angles[0] - curr_angle + 360) % 360
        if (err_angle > 180):
            err_angle = 360 - err_angle

        win.mouseVisible = False
        display_warning = 0
    PolygonComponent circle_target_3
      fillColor [set every repeat] = $stim_color
      lineColor [set every repeat] = $stim_color
      pos = (-.25, 0)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent dot_resp1_9
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      nVertices = 75
      pos [set every frame] = dot_pos_resp
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = dot_size
      startVal [condition] = all(current_pos) != all([0.0,0.0])
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    PolygonComponent circle_response_3
      fillColor [set every frame] = $color_rgb
      lineColor [set every frame] = $color_rgb
      pos = (.25, 0)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent circle_response_gray_3
      fillColor [set every frame] = gray
      lineColor [set every frame] = gray
      pos = (.25, 0)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [condition] = all(current_pos) != all([0.25,0.0])
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    PolygonComponent circle_resp_9
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 10
      nVertices = 75
      pos = [.25,0]
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = circle_size
      startVal [time (s)] = 0
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  Routine feedback
    PolygonComponent circle_target_4
      fillColor [set every repeat] = $stim_color
      lineColor [set every repeat] = $stim_color
      pos = (-.25, 0)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent circle_response_4
      fillColor [set every repeat] = $color_rgb
      lineColor [set every repeat] = $color_rgb
      pos = (.25, 0)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text
      color = black
      letterHeight = 0.05
      pos = (-.25, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Original color:
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    TextComponent text_2
      color = black
      letterHeight = 0.05
      pos = (.25, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Your response:
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_4
      color = black
      letterHeight = 0.03
      pos = (0, -.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"Error: {err_angle} degree(s)"
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  Routine instructions
    TextComponent instruct_text
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        During this experiment, you will see two circles on the screen. The left circle will be colored while the right circle will initially be gray. When you move your mouse, the gray circle will begin to change color. Your job is to adjust the color of the right circle until it matches the color of the left circle. When the two circles match, click the mouse button to submit your response and begin the next trial.

        Let's try a few practice trials.

        Press SPACE to begin the practice.
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine setup
  Routine instructions
  LoopInitiator trials_practice loopType="TrialHandler"
    conditionsFile = colors.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('color_category', 'red'), ('color_condition', 1)]),
      OrderedDict([('color_category', 'orange'), ('color_condition', 2)]),
      OrderedDict([('color_category', 'yellow'), ('color_condition', 3)]),
      OrderedDict([('color_category', 'green'), ('color_condition', 4)]),
      OrderedDict([('color_category', 'blue'), ('color_condition', 5)]),
      OrderedDict([('color_category', 'purple'), ('color_condition', 6)])]
    Routine trial_rgb_practice
    Routine feedback
  LoopTerminator trials_practice
  Routine practice_end
  LoopInitiator block_rgb loopType="TrialHandler"
    loopType = random
    nReps = block_total
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    LoopInitiator trials_rgb loopType="TrialHandler"
      conditionsFile = colors.csv
      loopType = random
      nReps = trial_n
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      conditions:
        [OrderedDict([('color_category', 'red'), ('color_condition', 1)]),
        OrderedDict([('color_category', 'orange'), ('color_condition', 2)]),
        OrderedDict([('color_category', 'yellow'), ('color_condition', 3)]),
        OrderedDict([('color_category', 'green'), ('color_condition', 4)]),
        OrderedDict([('color_category', 'blue'), ('color_condition', 5)]),
        OrderedDict([('color_category', 'purple'), ('color_condition', 6)])]
      Routine trial_rgb
    LoopTerminator trials_rgb
    Routine end_block
  LoopTerminator block_rgb
  LoopInitiator block_hsv loopType="TrialHandler"
    loopType = random
    nReps = block_total
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    LoopInitiator trials_hsv loopType="TrialHandler"
      conditionsFile = colors.csv
      loopType = random
      nReps = trial_n
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      conditions:
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      Routine trial_hsv
    LoopTerminator trials_hsv
    Routine end_block
  LoopTerminator block_hsv
  Routine final
