PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Use version = 2022.1.4
  Window size (pixels) = [1440, 900]
  color = 0.6549, 0.6549, 0.6549
  expName = lab5
  keyboardBackend = ioHub
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Routines
  Routine setup
    CodeComponent code_setup
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        import scipy
        import statistics

        trial_n = 5
        block_n = 1
        array_present_time = 100 # seconds
        fix_time = 0.5

        block_total = 3
        block_total_multiplier = 2

        total_accuracy_rs_bs = [[]]*6
        total_accuracy_rs_rc = [[]]*6
        total_accuracy_bc_lc = [[]]*6
        total_accuracy_rs_rc_bs = [[]]*6
        total_accuracy_vb_hb = [[]]*6
        total_accuracy_t_l = [[]]*6

        for i in range(6):
            total_accuracy_rs_bs[i] = []
            total_accuracy_rs_rc[i] = []
            total_accuracy_bc_lc[i] = []
            total_accuracy_rs_rc_bs[i] = []
            total_accuracy_vb_hb[i] = []
            total_accuracy_t_l[i] = []

        win.mouseVisible = False

        red_square_opacity = 0
        big_circle_opacity = 0
        vertical_bar_opacity = 0
        stim_t_opacity = 0

        trial_i = 0
    CodeComponent code_stim_functions
      Code Type = Auto->JS
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      Begin Experiment:
        def get_box_centers(num_box):
            #calculate minimum safe distance
            min_dist = 1.0 / (num_box+4) + .1

            # check minimum distance for all element pair distances
            while True:
                # generate random positions
                centers = np.random.uniform(-0.92, 0.92, [(num_box+4), 2])

                dist = scipy.spatial.distance.pdist(centers)

                if dist.min() > min_dist:
                    break

            centers_list = list(centers)

            return centers_list

        def generate_blue_square(position):
            stim = visual.Rect(
                win=win, name='blue_square',
                width=(0.0375, 0.05)[0], height=(0.0375, 0.05)[1],
                ori=0.0, pos=position, anchor='center',
                lineWidth=1.0,     colorSpace='rgb',  lineColor='blue', fillColor='blue',
                opacity=1.0, depth=-3.0, interpolate=True)
            return stim

        def generate_red_circle(position):
            stim = visual.ShapeStim(
                win=win, name='red_circle',
                size=(0.0375, 0.05), vertices='circle',
                ori=0.0, pos=position, anchor='center',
                lineWidth=1.0,     colorSpace='rgb',  lineColor='red', fillColor='red',
                opacity=1.0, depth=-4.0, interpolate=True)
            return stim

        def generate_little_circle(position):
            stim = visual.ShapeStim(
                win=win, name='red_circle',
                size=(0.0375, 0.05), vertices='circle',
                ori=0.0, pos=position, anchor='center',
                lineWidth=1.0,     colorSpace='rgb',  lineColor='red', fillColor='red',
                opacity=1.0, depth=-4.0, interpolate=True)
            return stim

        def generate_horizontal_bar(position):
            stim = visual.Rect(
                    win=win, name='horizontal_bar',
                    width=(0.02, 0.1)[0], height=(0.02, 0.1)[1],
                    ori=90.0, pos=position, anchor='center',
                    lineWidth=1.0,     colorSpace='rgb',  lineColor='blue', fillColor='blue',
                    opacity=1.0, depth=-7.0, interpolate=True)
            return stim

        def generate_red_bar(position):
            stim = visual.Rect(
                    win=win, name='red_bar',
                    width=(0.02, 0.1)[0], height=(0.02, 0.1)[1],
                    ori=0.0, pos=position, anchor='center',
                    lineWidth=1.0,     colorSpace='rgb',  lineColor='red', fillColor='red',
                    opacity=1.0, depth=-9.0, interpolate=True)
            return stim
  Routine practice_end
    TextComponent end_practice_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished the practice!

        Now it's time to begin the real experimental trials. These will be exactly the same as what you just practiced, but you will no longer receive feedback.

        You will see a screen encouraging you to take a break at several times during the experiment. When you have completed all trials, you will see your accuracy results. Record these results and report them to your instructor.

        If you have any questions, please ask your instructor now.

        Press SPACE when you are ready to begin.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        total_accuracy_rs_bs = [[]]*6
        total_accuracy_rs_rc = [[]]*6
        total_accuracy_bc_lc = [[]]*6
        total_accuracy_rs_rc_bs = [[]]*6
        total_accuracy_vb_hb = [[]]*6
        total_accuracy_t_l = [[]]*6

        for i in range(6):
            total_accuracy_rs_bs[i] = []
            total_accuracy_rs_rc[i] = []
            total_accuracy_bc_lc[i] = []
            total_accuracy_rs_rc_bs[i] = []
            total_accuracy_vb_hb[i] = []
            total_accuracy_t_l[i] = []
  Routine final
    CodeComponent code_end
      Code Type = Auto->JS
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      Begin Routine:
        msg_1 = 'Red Square/\nBlue Square:\n\n\n'
        msg_2 = 'Red Square/\nRed Circle:\n\n\n'
        msg_3 = 'Big Circle/\nLittle Circle:\n\n\n'
        msg_4 = 'Red Square/\nRed Circle/\nBlue Square:\n\n'
        msg_5 = 'Vertical Bar/\nHorizontal Bar/\nRed Bar:\n\n'
        msg_6 = 'T/\nL:\n\n\n'


        set_sizes = [1,2,4,8,16,32]
        means_rs_bs = [0]*6
        means_rs_rc = [0]*6
        means_bc_lc = [0]*6
        means_rs_rc_bs = [0]*6
        means_vb_hb = [0]*6
        means_t_l = [0]*6

        for i in range(6):
            means_rs_bs[i] = statistics.mean(total_accuracy_rs_bs[i])
        results = np.polyfit(set_sizes, means_rs_bs, 1)[0]
        msg_1 += f"{round(results*1000, 2)}"

        for i in range(6):
            means_rs_rc[i] = statistics.mean(total_accuracy_rs_rc[i])
        results = np.polyfit(set_sizes, means_rs_rc, 1)[0]
        msg_2 += f"{round(results*1000, 2)}"

        for i in range(6):
            means_bc_lc[i] = statistics.mean(total_accuracy_bc_lc[i])
        results = np.polyfit(set_sizes, means_bc_lc, 1)[0]
        msg_3 += f"{round(results*1000, 2)}"

        for i in range(6):
            means_rs_rc_bs[i] = statistics.mean(total_accuracy_rs_rc_bs[i])
        results = np.polyfit(set_sizes, means_rs_rc_bs, 1)[0]
        msg_4 += f"{round(results*1000, 2)}"

        for i in range(6):
            means_vb_hb[i] = statistics.mean(total_accuracy_vb_hb[i])
        results = np.polyfit(set_sizes, means_vb_hb, 1)[0]
        msg_5 += f"{round(results*1000, 2)}"

        for i in range(6):
            means_t_l[i] = statistics.mean(total_accuracy_t_l[i])
        results = np.polyfit(set_sizes, means_t_l, 1)[0]
        msg_6 += f"{round(results*1000, 2)}"
    TextComponent end_text
      color = black
      letterHeight = 0.05
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Results:
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    TextComponent end_text_1
      color = black
      letterHeight = 0.04
      pos = (-.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_1
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    TextComponent end_text_2
      color = black
      letterHeight = 0.04
      pos = (-.35, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_2
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    TextComponent end_text_3
      color = black
      letterHeight = 0.04
      pos = (-.1, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_3
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    TextComponent end_text_4
      color = black
      letterHeight = 0.04
      pos = (0.1, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_4
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    TextComponent end_text_5
      color = black
      letterHeight = 0.04
      pos = (0.35, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_5
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    TextComponent end_text_6
      color = black
      letterHeight = 0.04
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_6
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    TextComponent end_text_7
      color = black
      letterHeight = 0.05
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Record this result.

        Press SPACE when you are ready to end the experiment.
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 60
      store = nothing
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  Routine end_block
    CodeComponent block_message_2
      Code Type = Auto->JS
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      Begin Routine:
        block_msg = "You have reached the end of block " + str(block_n) + " of " + str(block_total*2*block_total_multiplier) + "."
      End Routine:
        block_n += 1
    TextComponent block_message1_2
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_msg
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    TextComponent block_message2_2
      color = black
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please take a short break.

        Press SPACE when you are ready to continue.
    KeyboardComponent key_resp_block_cont_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        feedback_msg = ''

        if key_resp.corr == 1:
            feedback_msg = "That was correct! \nPress SPACE to continue."
        else:
            feedback_msg = f"That was incorrect. The correct answer was {corr_ans.upper()}. \nPress SPACE to continue."
    TextComponent text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_msg
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    KeyboardComponent key_resp_feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions
    TextComponent instruct_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        During the experiment, you will see various objects on the screen. Your job is to search for a specific target object that is different from the other objects. The target object may or may not be on the screen. For each block of trials, you will first see a screen showing which target object to search for during that block. For each trial, you will have to search for the target and indicate if it is present or not.

        Press the RIGHT arrow if the target is present and press the LEFT arrow if the target is absent.

        Let's try a few practice trials.

        Press SPACE to begin the practice.
    KeyboardComponent key_resp_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if target_present == True:
            corr_ans = 'left'
        else:
            corr_ans = 'right'
      End Routine:
        red_square_opacity = 0
        big_circle_opacity = 0
        vertical_bar_opacity = 0
        stim_t_opacity = 0

        if block_type == "red_square_blue_square":
            if key_resp.corr == 1:
                total_accuracy_rs_bs[set_size_condition].append(key_resp.rt)
        elif block_type == "red_square_red_circle":
            if key_resp.corr == 1:
                total_accuracy_rs_rc[set_size_condition].append(key_resp.rt)
        elif block_type == "big_circle_little_circle":
            if key_resp.corr == 1:
                total_accuracy_bc_lc[set_size_condition].append(key_resp.rt)
        elif block_type == "red_square_red_circle_blue_square":
            if key_resp.corr == 1:
                total_accuracy_rs_rc_bs[set_size_condition].append(key_resp.rt)
        elif block_type == "vertical_bar_horizontal_bar":
            if key_resp.corr == 1:
                total_accuracy_vb_hb[set_size_condition].append(key_resp.rt)
        elif block_type == "t_l":
            if key_resp.corr == 1:
                total_accuracy_t_l[set_size_condition].append(key_resp.rt)
    CodeComponent code_make_stim
      Code Type = Auto->JS
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      Begin Routine:
        stims = []

        locations = get_box_centers(set_size)

        if (block_type == "red_square_blue_square") & target_present == True:
            red_square_opacity = 1
            for x in range(set_size-1):
                stim = generate_blue_square(locations.pop())
                stims.append(stim)
        elif (block_type == "red_square_red_circle") & target_present == True:
            red_square_opacity = 1
            for x in range(set_size-1):
                stim = generate_red_circle(locations.pop())
                stims.append(stim)
        elif (block_type == "big_circle_little_circle") & target_present == True:
            big_circle_opacity = 1
            for x in range(set_size-1):
                stim = generate_little_circle(locations.pop())
                stims.append(stim)
        elif (block_type == "red_square_red_circle_blue_square") & target_present == True:
            red_square_opacity = 1
            for x in range(int((set_size-1) /2)):
                stim = generate_red_circle(locations.pop())
                stims.append(stim)
            for x in range(int(set_size/2)):
                stim = generate_blue_square(locations.pop())
                stims.append(stim)
        elif (block_type == "vertical_bar_horizontal_bar") & target_present == True:
            vertical_bar_opacity = 1
            for x in range(int((set_size-1) /2)):
                stim = generate_horizontal_bar(locations.pop())
                stims.append(stim)
            for x in range(int(set_size /2)):
                stim = generate_red_bar(locations.pop())
                stims.append(stim)
        elif (block_type == "t_l") & target_present == True:
            stim_t_opacity = 1
            for x in range(set_size-1):
                stim = visual.TextStim(win=win, name='stim_l',
                    text='L',
                    font='Open Sans',
                    pos=locations.pop(), height=0.05, wrapWidth=None, ori=0.0,
                    color='black', colorSpace='rgb', opacity=1.0,
                    languageStyle='LTR',
                    depth=-11.0);
                stims.append(stim)
        elif (block_type == "red_square_blue_square") :
            for x in range(set_size):
                stim = generate_blue_square(locations.pop())
                stims.append(stim)
        elif (block_type == "red_square_red_circle") :
            for x in range(set_size):
                stim = generate_red_circle(locations.pop())
                stims.append(stim)
        elif (block_type == "big_circle_little_circle") :
            for x in range(set_size):
                stim = generate_little_circle(locations.pop())
                stims.append(stim)
        elif (block_type == "red_square_red_circle_blue_square") :
            if set_size == 1:
                for x in range(set_size):
                    stim = generate_red_circle(locations.pop())
                    stims.append(stim)
            else:
                for x in range(int(set_size/2)):
                    stim = generate_red_circle(locations.pop())
                    stims.append(stim)

                for x in range(int(set_size/2)):
                    stim = generate_blue_square(locations.pop())
                    stims.append(stim)
        elif (block_type == "vertical_bar_horizontal_bar") :
            if set_size == 1:
                for x in range(set_size):
                    stim = generate_horizontal_bar(locations.pop())
                    stims.append(stim)
            else:
                for x in range(int(set_size/2)):
                    stim = generate_horizontal_bar(locations.pop())
                    stims.append(stim)

                for x in range(int(set_size/2)):
                    stim = generate_red_bar(locations.pop())
                    stims.append(stim)
        elif (block_type == "t_l") :
            for x in range(set_size):
                stim = visual.TextStim(win=win, name='stim_l',
                    text='L',
                    font='Open Sans',
                    pos=locations.pop(), height=0.05, wrapWidth=None, ori=0.0,
                    color='black', colorSpace='rgb', opacity=1.0,
                    languageStyle='LTR',
                    depth=-11.0);
                stims.append(stim)
    CodeComponent code_draw
      Code Type = Auto->JS
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      Begin Routine:
        for stim in stims:
            stim.setAutoDraw(True)
      End Routine:
        for stim in stims:
            stim.setAutoDraw(False)
    PolygonComponent big_circle
      fillColor = red
      lineColor = red
      opacity [set every repeat] = big_circle_opacity
      pos [set every repeat] = locations.pop()
      saveStartStop = False
      shape = circle
      size [set every repeat] = (0.075, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $array_present_time
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    PolygonComponent vertical_bar
      fillColor = blue
      lineColor = blue
      opacity [set every repeat] = vertical_bar_opacity
      pos [set every repeat] = locations.pop()
      saveStartStop = False
      shape = rectangle
      size = (0.02, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $array_present_time
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    PolygonComponent red_square
      fillColor = red
      lineColor = red
      opacity [set every repeat] = red_square_opacity
      pos [set every repeat] = locations.pop()
      saveStartStop = False
      shape = rectangle
      size = (0.0375, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $array_present_time
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    TextComponent stim_t
      color = black
      letterHeight = 0.05
      opacity [set every repeat] = stim_t_opacity
      pos [set every repeat] = locations.pop()
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $array_present_time
      text = T
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    TextComponent text_6
      color = black
      letterHeight = 0.03
      pos = (.2, -.95)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Target Absent
        >
    TextComponent text_7
      color = black
      letterHeight = 0.03
      pos = (-.2, -.95)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Target Present
        <
    KeyboardComponent key_resp
      allowedKeys = 'right', 'left'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine fixation
    PolygonComponent fix_cross
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.075, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fix_time
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  Routine target_remind
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if (block_type == "red_square_blue_square"):
            red_square_opacity = 1
        elif (block_type == "red_square_red_circle"):
            red_square_opacity = 1
        elif (block_type == "big_circle_little_circle"):
            big_circle_opacity = 1
        elif (block_type == "red_square_red_circle_blue_square"):
            red_square_opacity = 1
        elif (block_type == "vertical_bar_horizontal_bar"):
            vertical_bar_opacity = 1
        elif (block_type == "t_l"):
            stim_t_opacity = 1
      End Routine:
        red_square_opacity = 0
        blue_square_opacity = 0
        red_circle_opacity = 0
        big_circle_opacity = 0
        little_circle_opacity = 0
        vertical_bar_opacity = 0
        horizontal_bar_opacity = 0
        stim_t_opacity = 0
        stim_l_opacity = 0
    PolygonComponent big_circle_2
      fillColor = red
      lineColor = red
      opacity [set every repeat] = big_circle_opacity
      pos [set every repeat] = (0,0)
      saveStartStop = False
      shape = circle
      size = (0.075, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent vertical_bar_2
      fillColor = blue
      lineColor = blue
      opacity [set every repeat] = vertical_bar_opacity
      pos [set every repeat] = (0,0)
      saveStartStop = False
      shape = rectangle
      size = (0.02, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent red_square_2
      fillColor = red
      lineColor = red
      opacity [set every repeat] = red_square_opacity
      pos [set every repeat] = (0,0)
      saveStartStop = False
      shape = rectangle
      size = (0.0375, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent stim_t_2
      color = black
      letterHeight = 0.05
      opacity [set every repeat] = stim_t_opacity
      pos [set every repeat] = (0,0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = T
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_5
      color = black
      letterHeight = 0.05
      pos = (0, -.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Target:
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Flow
  Routine setup
  Routine instructions
  LoopInitiator blocks_practice loopType="TrialHandler"
    conditionsFile = block_conds.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('search_type', 'parallel'), ('block_type', 'red_square_blue_square')]),
      OrderedDict([('search_type', 'parallel'), ('block_type', 'red_square_red_circle')]),
      OrderedDict([('search_type', 'parallel'), ('block_type', 'big_circle_little_circle')]),
      OrderedDict([('search_type', 'serial'), ('block_type', 'red_square_red_circle_blue_square')]),
      OrderedDict([('search_type', 'serial'), ('block_type', 'vertical_bar_horizontal_bar')]),
      OrderedDict([('search_type', 'serial'), ('block_type', 't_l')])]
    LoopInitiator trials_practice loopType="TrialHandler"
      conditionsFile = set_conds_prac.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('set_size', 16), ('target_present', True), ('set_size_condition', 1)]),
        OrderedDict([('set_size', 8), ('target_present', False), ('set_size_condition', 5)])]
      Routine target_remind
      Routine fixation
      Routine trial
      Routine feedback
    LoopTerminator trials_practice
  LoopTerminator blocks_practice
  Routine practice_end
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = block_conds.csv
    loopType = random
    nReps = block_total_multiplier
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    conditions:
      [OrderedDict([('search_type', 'parallel'), ('block_type', 'red_square_blue_square')]),
      OrderedDict([('search_type', 'parallel'), ('block_type', 'red_square_red_circle')]),
      OrderedDict([('search_type', 'parallel'), ('block_type', 'big_circle_little_circle')]),
      OrderedDict([('search_type', 'serial'), ('block_type', 'red_square_red_circle_blue_square')]),
      OrderedDict([('search_type', 'serial'), ('block_type', 'vertical_bar_horizontal_bar')]),
      OrderedDict([('search_type', 'serial'), ('block_type', 't_l')])]
    Routine target_remind
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = set_conds.csv
      loopType = random
      nReps = trial_n
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      conditions:
        [OrderedDict([('set_size', 1), ('target_present', True), ('set_size_condition', 0)]),
        OrderedDict([('set_size', 2), ('target_present', True), ('set_size_condition', 1)]),
        OrderedDict([('set_size', 4), ('target_present', True), ('set_size_condition', 2)]),
        OrderedDict([('set_size', 8), ('target_present', True), ('set_size_condition', 3)]),
        OrderedDict([('set_size', 16), ('target_present', True), ('set_size_condition', 4)]),
        OrderedDict([('set_size', 32), ('target_present', True), ('set_size_condition', 5)]),
        OrderedDict([('set_size', 1), ('target_present', False), ('set_size_condition', 0)]),
        OrderedDict([('set_size', 2), ('target_present', False), ('set_size_condition', 1)]),
        OrderedDict([('set_size', 4), ('target_present', False), ('set_size_condition', 2)]),
        OrderedDict([('set_size', 8), ('target_present', False), ('set_size_condition', 3)]),
        OrderedDict([('set_size', 16), ('target_present', False), ('set_size_condition', 4)]),
        OrderedDict([('set_size', 32), ('target_present', False), ('set_size_condition', 5)])]
      Routine fixation
      Routine trial
    LoopTerminator trials
    Routine end_block
  LoopTerminator blocks
  Routine final
