PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.1.4
  Window size (pixels) = [1440, 900]
  expName = lab6
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code_presentation
      Code Type = Auto->JS
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      End Routine:
        i += 1
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_time
      text [set every repeat] = $trial_stim[i]
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  Routine setup
    CodeComponent code_setup
      Code Type = Auto->JS
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      Begin Experiment:
        import string
        import random

        stim_time = .1
        fix_time = .4
        mask_time = .1

        block_count = 1
        block_n = 1
        trial_n = 5
        trial_total = 1

        total_accuracy_all_miss = [0] * 8
        total_accuracy_t1_only = [0] * 8
        total_accuracy_t2_only = [0] * 8
        total_accuracy_t1_miss = [0] * 8
        total_accuracy_t1_t2 = [0] * 8

        win.mouseVisible = False
  Routine final
    CodeComponent code_end
      Code Type = Auto->JS
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      Begin Routine:
        msg_1 = 'T1 and T2\nMissed %\n\n'
        msg_2 = 'T1 Correct %\n\n'
        msg_3 = 'T2 Correct %\n\n'
        msg_4 = 'Only T1 Missed %\n\n'
        msg_5 = 'Both T1 and\nT2 Correct %\n\n'


        for i in range(8):
            msg_1 += f"Lag {i+1}:   {round((total_accuracy_all_miss[i])/(trial_n*block_n), 2)*100}\n"
            thisExp.addData(f"Lag {i+1} total_accuracy_all_miss", round((total_accuracy_all_miss[i])/(trial_n*block_n)*100, 2))

        for i in range(8):
            msg_2 += f"{round((total_accuracy_t1_only[i])/(trial_n*block_n), 2)*100}\n"
            thisExp.addData(f"Lag {i+1} total_accuracy_t1_only", round((total_accuracy_t1_only[i])/(trial_n*block_n)*100, 2))

        for i in range(8):
            msg_3 += f"{round((total_accuracy_t2_only[i])/(trial_n*block_n), 2)*100}\n"
            thisExp.addData(f"Lag {i+1} total_accuracy_t2_only", round((total_accuracy_t2_only[i])/(trial_n*block_n)*100, 2))

        for i in range(8):
            msg_4 += f"{round((total_accuracy_t1_miss[i])/(trial_n*block_n), 2)*100}\n"
            thisExp.addData(f"Lag {i+1} total_accuracy_t1_miss", round((total_accuracy_t1_miss[i])/(trial_n*block_n)*100, 2))

        for i in range(8):
            msg_5 += f"{round((total_accuracy_t1_t2[i])/(trial_n*block_n), 2)*100}\n"
            thisExp.addData(f"Lag {i+1} total_accuracy_t1_t2", round((total_accuracy_t1_t2[i])/(trial_n*block_n)*100, 2))
    TextComponent end_text
      letterHeight = 0.05
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Results:
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    TextComponent end_text_1
      letterHeight = 0.03
      pos = (-.4, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_1
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    TextComponent end_text_2
      letterHeight = 0.03
      pos = (-.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_2
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    TextComponent end_text_3
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_3
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    TextComponent end_text_4
      letterHeight = 0.03
      pos = (.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_4
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    TextComponent end_text_5
      letterHeight = 0.03
      pos = (.4, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_5
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    TextComponent end_text_6
      letterHeight = 0.05
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Record this result.

        Press SPACE when you are ready to end the experiment.
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 120
      store = nothing
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  Routine fixation
    PolygonComponent fixation_stim
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fix_time
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  Routine instructions
    TextComponent instruct_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        During this experiment, you will see a series of numbers presented in the center of the screen. Sometimes, you will see a letter instead of a number. Your job is to identify the letters you see. The numbers and letters will be presented very quickly and might be difficult to see.

        You will first start the trial by pressing the spacebar. During the trial, you will first see a cross in the center of the screen. This is your warning that the numbers are about to appear and that you should get ready. Next, you will see a rapid succession of numbers presented in the center of the screen. You will also see two letters during the rapid series of numbers. After all the numbers have been presented, you will see a '&' symbol. Finally, you will see a question mark. When you see the question mark, type the two letters that you just saw. You will then press the spacebar again to start a new trial.

        Let's try a few practice trials.

        Press SPACE to begin the practice.
    KeyboardComponent key_resp_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine feedback
    TextComponent feedback_text1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_msg_1 + feedback_msg_2
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    TextComponent feedback_text2
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp_feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_practice
    TextComponent end_practice_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished the practice!

        Now it's time to begin the real experimental trials. These will be exactly the same as what you just practiced, but you will no longer receive feedback.

        You will see a screen encouraging you to take a break at several times during the experiment. When you have completed all trials, you will see your accuracy results. Record these results and report them to your instructor.

        If you have any questions, please ask your instructor now.

        Press SPACE when you are ready to begin.
    KeyboardComponent key_resp_end_prac
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        total_accuracy_all_miss = [0] * 8
        total_accuracy_t1_only = [0] * 8
        total_accuracy_t2_only = [0] * 8
        total_accuracy_t1_miss = [0] * 8
        total_accuracy_t1_t2 = [0] * 8
  Routine end_block
    CodeComponent block_message
      Code Type = Auto->JS
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      Begin Routine:
        block_msg = "You have reached the end of block " + str(block_count) + " of " + str(block_n) + "."
      End Routine:
        block_count += 1
    TextComponent block_message1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_msg
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    TextComponent block_message2
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please take a short break.

        Press SPACE when you are ready to continue.
    KeyboardComponent key_resp_block_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_setup
    CodeComponent code_trial_setup
      Code Type = Auto->JS
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      Begin Routine:
        stim_numbers = []
        stim_letters = []
        trial_stim = []

        for i in range(2):
            stim_letter = random.choice(string.ascii_uppercase)
            while (stim_letter == "I") or (stim_letter == "O"):
                stim_letter = random.choice(string.ascii_uppercase)
            while stim_letter in stim_letters[-2:]:
                stim_letter = random.choice(string.ascii_uppercase)
            stim_letters.append(stim_letter)

        for i in range(14):
            stim_number = random.randint(2,9)
            while stim_number in stim_numbers[-4:]:
                stim_number = random.randint(2,9)
            stim_numbers.append(stim_number)

        trial_stim = stim_numbers

        trial_stim.insert((t1_position - 1), stim_letters[0])
        trial_stim.insert((t1_position + lag_cond - 1), stim_letters[1])

        i = 0
  Routine mask
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mask_time
      text = &
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  Routine response_1
    CodeComponent code_response
      Code Type = Auto->JS
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      End Routine:
        feedback_msg_1 = ''
        if key_resp_1.corr == 1:
            feedback_msg_1 = "Your first answer was correct!"
        else:
            feedback_msg_1 = f"Your first answer was incorrect. The correct answer was {stim_letters[0]}."
    KeyboardComponent key_resp_1
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z'
      correctAns = $stim_letters[0].lower()
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ?
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  Routine response_2
    CodeComponent code_response_2
      Code Type = Auto->JS
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      End Routine:
        feedback_msg_2 = ''

        if key_resp_2.corr == 1:
            feedback_msg_2 = "\nYour first answer was correct!"
        else:
            feedback_msg_2 = f"\nYour first answer was incorrect. The correct answer was {stim_letters[1]}."

        if (key_resp_1.corr == 0) and (key_resp_2.corr == 0):
            total_accuracy_all_miss[lag_cond-1] += 1
        elif (key_resp_1.corr == 1) and (key_resp_2.corr == 0):
            total_accuracy_t1_only[lag_cond-1] += 1
        elif (key_resp_1.corr == 0) and (key_resp_2.corr == 1):
            total_accuracy_t2_only[lag_cond-1] += 1
        elif (key_resp_1.corr == 0):
            total_accuracy_t1_miss[lag_cond-1] += 1
        elif (key_resp_1.corr == 1) and (key_resp_2.corr == 1):
            total_accuracy_t1_t2[lag_cond-1] += 1
    KeyboardComponent key_resp_2
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z'
      correctAns = $stim_letters[1].lower()
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine get_ready
    TextComponent text_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Ready?

        Press SPACE to begin the trial.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine setup
  Routine instructions
  LoopInitiator practice_trials_2 loopType="TrialHandler"
    conditionsFile = trial_conds_prac.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('lag_cond', 1), ('t1_position', 3), ('soa', 100)]),
      OrderedDict([('lag_cond', 2), ('t1_position', 3), ('soa', 200)]),
      OrderedDict([('lag_cond', 3), ('t1_position', 4), ('soa', 300)]),
      OrderedDict([('lag_cond', 4), ('t1_position', 4), ('soa', 400)]),
      OrderedDict([('lag_cond', 5), ('t1_position', 5), ('soa', 500)]),
      OrderedDict([('lag_cond', 6), ('t1_position', 5), ('soa', 600)]),
      OrderedDict([('lag_cond', 7), ('t1_position', 6), ('soa', 700)]),
      OrderedDict([('lag_cond', 8), ('t1_position', 6), ('soa', 800)]),
      OrderedDict([('lag_cond', 1), ('t1_position', 7), ('soa', 100)]),
      OrderedDict([('lag_cond', 2), ('t1_position', 7), ('soa', 200)])]
    Routine trial_setup
    Routine get_ready
    Routine fixation
    LoopInitiator practice_trial_1 loopType="TrialHandler"
      loopType = random
      nReps = len(trial_stim)
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      Routine trial
    LoopTerminator practice_trial_1
    Routine mask
    Routine response_1
    Routine response_2
    Routine feedback
  LoopTerminator practice_trials_2
  Routine end_practice
  LoopInitiator blocks loopType="TrialHandler"
    loopType = random
    nReps = block_n
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = trial_conds.csv
      loopType = random
      nReps = trial_total
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      conditions:
        [OrderedDict([('lag_cond', 1), ('t1_position', 3), ('soa', 100)]),
        OrderedDict([('lag_cond', 2), ('t1_position', 3), ('soa', 200)]),
        OrderedDict([('lag_cond', 3), ('t1_position', 3), ('soa', 300)]),
        OrderedDict([('lag_cond', 4), ('t1_position', 3), ('soa', 400)]),
        OrderedDict([('lag_cond', 5), ('t1_position', 3), ('soa', 500)]),
        OrderedDict([('lag_cond', 6), ('t1_position', 3), ('soa', 600)]),
        OrderedDict([('lag_cond', 7), ('t1_position', 3), ('soa', 700)]),
        OrderedDict([('lag_cond', 8), ('t1_position', 3), ('soa', 800)]),
        OrderedDict([('lag_cond', 1), ('t1_position', 4), ('soa', 100)]),
        OrderedDict([('lag_cond', 2), ('t1_position', 4), ('soa', 200)]),
        OrderedDict([('lag_cond', 3), ('t1_position', 4), ('soa', 300)]),
        OrderedDict([('lag_cond', 4), ('t1_position', 4), ('soa', 400)]),
        OrderedDict([('lag_cond', 5), ('t1_position', 4), ('soa', 500)]),
        OrderedDict([('lag_cond', 6), ('t1_position', 4), ('soa', 600)]),
        OrderedDict([('lag_cond', 7), ('t1_position', 4), ('soa', 700)]),
        OrderedDict([('lag_cond', 8), ('t1_position', 4), ('soa', 800)]),
        OrderedDict([('lag_cond', 1), ('t1_position', 5), ('soa', 100)]),
        OrderedDict([('lag_cond', 2), ('t1_position', 5), ('soa', 200)]),
        OrderedDict([('lag_cond', 3), ('t1_position', 5), ('soa', 300)]),
        OrderedDict([('lag_cond', 4), ('t1_position', 5), ('soa', 400)]),
        OrderedDict([('lag_cond', 5), ('t1_position', 5), ('soa', 500)]),
        OrderedDict([('lag_cond', 6), ('t1_position', 5), ('soa', 600)]),
        OrderedDict([('lag_cond', 7), ('t1_position', 5), ('soa', 700)])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
      Routine trial_setup
      Routine get_ready
      Routine fixation
      LoopInitiator trials_2 loopType="TrialHandler"
        loopType = random
        nReps = len(trial_stim)
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        Routine trial
      LoopTerminator trials_2
      Routine mask
      Routine response_1
      Routine response_2
    LoopTerminator trials
    Routine end_block
  LoopTerminator blocks
  Routine final
