PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.1.4
  Window size (pixels) = [1440, 900]
  expName = lab7
  keyboardBackend = ioHub
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Routines
  Routine trial
    SoundComponent sound_1
      saveStartStop = False
      sound [set every repeat] = $frequency_sound_1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $tone_time
      volume [set every repeat] = stim_vols[freq_cond-1]
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    SoundComponent sound_2
      saveStartStop = False
      sound [set every repeat] = $frequency_sound_2
      startVal [time (s)] = $tone_time + tone_delay
      stopVal [duration (s)] = $tone_time
      volume [set every repeat] = stim_vols[freq_cond-1]
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  Routine setup
    CodeComponent code_setup
      Code Type = Auto->JS
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      Begin Experiment:
        tone_time = 1
        tone_delay = .5
        fix_time = .5

        stim_vol = 0
        stim_vols = [0]*4

        trial_n = 2
        block_n = 2
        block_count = 1

        total_accuracy_change = [0] * 4
        total_accuracy_diff = [0] * 4

        trial_count_change = [0] * 4
        trial_count_diff = [0] * 4

        win.mouseVisible = False
  Routine final
    TextComponent end_text
      letterHeight = 0.05
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Results:
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    CodeComponent code_end
      Code Type = Auto->JS
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      Begin Routine:
        msg_0 = 'Base Frequency\n\n'
        msg_1 = 'Change Condition \n\n'
        msg_2 = 'Different Condition\n\n'


        base_freqs = [250, 500, 1000, 2000]
        for i in range(4):
            msg_0 += f"{base_freqs[i]} Hz:\n"

        for i in range(4):
            msg_1 += f"{round((total_accuracy_change[i])/(trial_count_change[i]), 2)}\n"
            thisExp.addData(f"Base Frequency {base_freqs[i]} total_accuracy_change", round((total_accuracy_change[i])/(trial_count_change[i]), 2))

        for i in range(4):
            msg_2 += f"{round((total_accuracy_diff[i])/(trial_count_diff[i]), 2)}\n"
            thisExp.addData(f"Base Frequency {base_freqs[i]} total_accuracy_diff", round((total_accuracy_diff[i])/(trial_count_diff[i]), 2))
    TextComponent end_text_0
      letterHeight = 0.03
      pos = (-.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_0
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    TextComponent end_text_1
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_1
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    TextComponent end_text_2
      letterHeight = 0.03
      pos = (.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_2
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    TextComponent end_text_3
      letterHeight = 0.05
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Record this result.

        Press SPACE when you are ready to end the experiment.
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 120
      store = nothing
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  Routine fixation
    PolygonComponent fixation_stim
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fix_time
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  Routine feedback
    TextComponent feedback_text1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_msg
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    TextComponent feedback_text2
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp_feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_practice
    TextComponent end_practice_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished the practice!

        Now it's time to begin the real experimental trials. These will be exactly the same as what you just practiced, but you will no longer receive feedback.

        You will see a screen encouraging you to take a break at several times during the experiment. When you have completed all trials, you will see your accuracy results. Record these results and report them to your instructor.

        If you have any questions, please ask your instructor now.

        Press SPACE when you are ready to begin.
    KeyboardComponent key_resp_end_prac
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        total_accuracy_change = [0] * 4
        total_accuracy_diff = [0] * 4

        trial_count_change = [0] * 4
        trial_count_diff = [0] * 4
  Routine end_block
    CodeComponent block_message
      Code Type = Auto->JS
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      Begin Routine:
        block_msg = "You have reached the end of block " + str(block_count) + " of " + str(block_n*2) + "."
      End Routine:
        block_count += 1
    TextComponent block_message1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_msg
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    TextComponent block_message2
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please take a short break.

        Press SPACE when you are ready to continue.
    KeyboardComponent key_resp_block_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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  Routine trial_setup
    CodeComponent code_trial_setup
      Code Type = Auto->JS
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      Begin Routine:
        stim_numbers = []
        stim_letters = []
        trial_stim = []

        for i in range(2):
            stim_letter = random.choice(string.ascii_uppercase)
            while (stim_letter == "I") or (stim_letter == "O"):
                stim_letter = random.choice(string.ascii_uppercase)
            while stim_letter in stim_letters[-2:]:
                stim_letter = random.choice(string.ascii_uppercase)
            stim_letters.append(stim_letter)

        for i in range(14):
            stim_number = random.randint(2,9)
            while stim_number in stim_numbers[-4:]:
                stim_number = random.randint(2,9)
            stim_numbers.append(stim_number)

        trial_stim = stim_numbers

        trial_stim.insert((t1_position - 1), stim_letters[0])
        trial_stim.insert((t1_position + lag_cond - 1), stim_letters[1])

        i = 0
  Routine response
    CodeComponent code_response
      Code Type = Auto->JS
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      Begin Routine:
        if modulate == "same":
            corr_ans = "left"
            corr_resp = "same"
        elif modulate == "different":
            corr_ans = "right"
            corr_resp = "different"
        if modulate == "lower":
            corr_ans = "left"
            corr_resp = "first"
        elif modulate == "higher":
            corr_ans = "right"
            corr_resp = "second"

        if block_condition == "change":
            left_arrow = "same"
            right_arrow = "different"
        elif block_condition == "diff":
            left_arrow = "first"
            right_arrow = "second"
      End Routine:
        feedback_msg = ''
        if block_condition == "change":
            if key_resp.corr == 1:
                feedback_msg = f"Correct! The tones were {corr_resp.upper()}."
            else:
                feedback_msg = f"Incorrect. The tones were {corr_resp.upper()}. The correct answer was {corr_ans.upper()}."
        elif block_condition == "diff":
            if key_resp.corr == 1:
                feedback_msg = f"Correct! The {corr_resp.upper()} was higher-pitched."
            else:
                feedback_msg = f"Incorrect. The {corr_resp.upper()} was higher-pitched.The correct answer was {corr_ans.upper()}."

        if block_condition == "change":
            trial_count_change[freq_cond-1] += 1
            if (key_resp.corr == 1):
                total_accuracy_change[freq_cond-1] += 1
        elif block_condition == "diff":
            trial_count_diff[freq_cond-1] += 1
            if (key_resp.corr == 1):
                total_accuracy_diff[freq_cond-1] += 1
    KeyboardComponent key_resp
      allowedKeys = 'right','left'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text
      letterHeight = 0.05
      pos = (.25, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $f">\n{right_arrow.upper()}"
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    TextComponent text_3
      letterHeight = 0.05
      pos = (-.25, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"<\n{left_arrow.upper()}"
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    TextComponent text_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ?
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  Routine get_ready
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Ready?

        Press SPACE to start.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions
    TextComponent instruct_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished the calibration!

        During the next part of the experiment, you will hear two tones. The tones will be presented quickly and might be difficult to hear. Please make sure that you have the sound on your computer turned on. In the beginning of each block of trials, you will be given instructions on how to judge the trials. Sometimes, your job will be to identify if the tones are the same or different. Other times, your job will be to identify if the first tone or second tone is higher pitched.

        You will first start the trial by pressing the spacebar. During the trial, you will first see a cross in the center of the screen. This is your warning that the tones are about to appear and that you should get ready. Then, you will hear a tone. There will be a brief delay and you will then hear a second tone. Finally, you will see the response screen. When you see the response screen, press the LEFT arrow if the tones are the SAME/the FIRST tone is higher-pitched and the RIGHT arrow if the tones are DIFFERENT/the SECOND tone is higher-pitched. You will then press the spacebar again to start a new trial.

        Let's try a few practice trials.

        Press SPACE to begin the practice.
    KeyboardComponent key_resp_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine block_instruct_change
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        block_instruct_msg = "Identify if the tones are SAME or DIFFERENT.\nPress SPACE to begin."
    TextComponent text_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_instruct_msg
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine block_instruct_diff
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        block_instruct_msg = "Identify if the higher tone is FIRST or SECOND.\nPress SPACE to begin."
    TextComponent text_6
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_instruct_msg
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine calibration
    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        if key_resp_calibrate.keys == "right":
            stim_vol += .025
        elif key_resp_calibrate.keys == "left":
            stim_vol -= .025
        elif key_resp_calibrate.keys == "space":
            stim_vols[freq_cond-1] = stim_vol
            calibration_trials.finished = True
    SoundComponent sound_3
      saveStartStop = False
      sound [set every repeat] = $frequency_sound_1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      volume [set every repeat] = stim_vol
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    TextComponent text_8
      letterHeight = 0.02
      pos = (.2, 0)
      saveStartStop = False
      startVal [time (s)] = 1.0
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      text:
        >
        Increase Volume
    TextComponent text_7
      letterHeight = 0.02
      pos = (-.2, 0)
      saveStartStop = False
      startVal [time (s)] = 1.0
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      text:
        <
        Decrease Volume
    TextComponent text_9
      letterHeight = 0.02
      saveStartStop = False
      startVal [time (s)] = 1.0
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      text:
        SPACE
        Accept Volume
    KeyboardComponent key_resp_calibrate
      allowedKeys = 'left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions_calibration
    TextComponent text_10
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        During this experiment, you will hear a series of tones at various frequencies. The first part of the experiment will be a calibration to ensure that you are able to comfortably hear the tones.

        During the calibration, a tone will be briefly presented. If the volume is too high, press the LEFT arrow. The tone will be presented again at a lower volume. If the volume is too low, press the RIGHT arrow. The tone will be presented again at a higher volume. You can repeat this process until the tone is at a comfortable volume. When you can hear the tone comfortably, press SPACE. This will be the volume of this tone throughout the experiment.

        Press SPACE when you are ready to begin the calibration.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      store = nothing
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  Routine block_instruct_practice
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if block_condition == "change":
            block_instruct_msg = "Identify if the tones are SAME or DIFFERENT.\nPress SPACE to begin."
        elif block_condition == "diff":
            block_instruct_msg = "Identify if the higher tone is FIRST or SECOND.\nPress SPACE to begin."
    TextComponent text_11
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_instruct_msg
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine setup
  Routine instructions_calibration
  LoopInitiator calibration_trials_2 loopType="TrialHandler"
    conditionsFile = freq_conds_calibrate.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('frequency_sound_1', 250), ('freq_cond', 1)]),
      OrderedDict([('frequency_sound_1', 500), ('freq_cond', 2)]),
      OrderedDict([('frequency_sound_1', 1000), ('freq_cond', 3)]),
      OrderedDict([('frequency_sound_1', 2000), ('freq_cond', 4)])]
    LoopInitiator calibration_trials loopType="TrialHandler"
      loopType = sequential
      nReps = 1000
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      Routine calibration
    LoopTerminator calibration_trials
  LoopTerminator calibration_trials_2
  Routine instructions
  LoopInitiator trials_practice loopType="TrialHandler"
    conditionsFile = freq_conds_prac.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block_condition', 'change'), ('frequency_sound_1', 250), ('modulate', 'different'), ('mod_hz', 5), ('frequency_sound_2', 255), ('freq_cond', 1)]),
      OrderedDict([('block_condition', 'change'), ('frequency_sound_1', 500), ('modulate', 'different'), ('mod_hz', 5), ('frequency_sound_2', 505), ('freq_cond', 2)]),
      OrderedDict([('block_condition', 'change'), ('frequency_sound_1', 1000), ('modulate', 'same'), ('mod_hz', 0), ('frequency_sound_2', 1000), ('freq_cond', 3)]),
      OrderedDict([('block_condition', 'diff'), ('frequency_sound_1', 250), ('modulate', 'higher'), ('mod_hz', 10), ('frequency_sound_2', 260), ('freq_cond', 1)]),
      OrderedDict([('block_condition', 'diff'), ('frequency_sound_1', 1000), ('modulate', 'lower'), ('mod_hz', 5), ('frequency_sound_2', 995), ('freq_cond', 3)]),
      OrderedDict([('block_condition', 'diff'), ('frequency_sound_1', 2000), ('modulate', 'higher'), ('mod_hz', 20), ('frequency_sound_2', 2020), ('freq_cond', 4)])]
    Routine block_instruct_practice
    Routine get_ready
    Routine fixation
    Routine trial
    Routine response
    Routine feedback
  LoopTerminator trials_practice
  Routine end_practice
  LoopInitiator block_change loopType="TrialHandler"
    loopType = random
    nReps = block_n
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    Routine block_instruct_change
    LoopInitiator trials_change loopType="TrialHandler"
      conditionsFile = freq_conds_change.csv
      loopType = random
      nReps = trial_n
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      conditions:
        [OrderedDict([('block_condition', 'change'), ('frequency_sound_1', 250), ('modulate', 'different'), ('mod_hz', 5), ('frequency_sound_2', 255), ('freq_cond', 1)]),
        OrderedDict([('block_condition', 'change'), ('frequency_sound_1', 250), ('modulate', 'different'), ('mod_hz', 10), ('frequency_sound_2', 260), ('freq_cond', 1)]),
        OrderedDict([('block_condition', 'change'), ('frequency_sound_1', 250), ('modulate', 'different'), ('mod_hz', 20), ('frequency_sound_2', 270), ('freq_cond', 1)]),
        OrderedDict([('block_condition', 'change'), ('frequency_sound_1', 500), ('modulate', 'different'), ('mod_hz', 5), ('frequency_sound_2', 505), ('freq_cond', 2)]),
        OrderedDict([('block_condition', 'change'), ('frequency_sound_1', 500), ('modulate', 'different'), ('mod_hz', 10), ('frequency_sound_2', 510), ('freq_cond', 2)]),
        OrderedDict([('block_condition', 'change'), ('frequency_sound_1', 500), ('modulate', 'different'), ('mod_hz', 20), ('frequency_sound_2', 520), ('freq_cond', 2)]),
        OrderedDict([('block_condition', 'change'), ('frequency_sound_1', 1000), ('modulate', 'different'), ('mod_hz', 5), ('frequency_sound_2', 1005), ('freq_cond', 3)]),
        OrderedDict([('block_condition', 'change'), ('frequency_sound_1', 1000), ('modulate', 'different'), ('mod_hz', 10), ('frequency_sound_2', 1010), ('freq_cond', 3)]),
        OrderedDict([('block_condition', 'change'), ('frequency_sound_1', 1000), ('modulate', 'different'), ('mod_hz', 20), ('frequency_sound_2', 1020), ('freq_cond', 3)])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
      Routine get_ready
      Routine fixation
      Routine trial
      Routine response
    LoopTerminator trials_change
    Routine end_block
  LoopTerminator block_change
  LoopInitiator block_diff loopType="TrialHandler"
    loopType = random
    nReps = block_n
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    Routine block_instruct_diff
    LoopInitiator trials_diff loopType="TrialHandler"
      conditionsFile = freq_conds_diff.csv
      loopType = random
      nReps = trial_n
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      conditions:
        [OrderedDict([('block_condition', 'diff'), ('frequency_sound_1', 250), ('modulate', 'higher'), ('mod_hz', 5), ('frequency_sound_2', 255), ('freq_cond', 1)]),
        OrderedDict([('block_condition', 'diff'), ('frequency_sound_1', 250), ('modulate', 'higher'), ('mod_hz', 10), ('frequency_sound_2', 260), ('freq_cond', 1)]),
        OrderedDict([('block_condition', 'diff'), ('frequency_sound_1', 250), ('modulate', 'higher'), ('mod_hz', 2), ('frequency_sound_2', 252), ('freq_cond', 1)]),
        OrderedDict([('block_condition', 'diff'), ('frequency_sound_1', 500), ('modulate', 'higher'), ('mod_hz', 5), ('frequency_sound_2', 505), ('freq_cond', 2)]),
        OrderedDict([('block_condition', 'diff'), ('frequency_sound_1', 500), ('modulate', 'higher'), ('mod_hz', 10), ('frequency_sound_2', 510), ('freq_cond', 2)]),
        OrderedDict([('block_condition', 'diff'), ('frequency_sound_1', 500), ('modulate', 'higher'), ('mod_hz', 2), ('frequency_sound_2', 502), ('freq_cond', 2)]),
        OrderedDict([('block_condition', 'diff'), ('frequency_sound_1', 1000), ('modulate', 'higher'), ('mod_hz', 5), ('frequency_sound_2', 1005), ('freq_cond', 3)]),
        OrderedDict([('block_condition', 'diff'), ('frequency_sound_1', 1000), ('modulate', 'higher'), ('mod_hz', 10), ('frequency_sound_2', 1010), ('freq_cond', 3)]),
        OrderedDict([('block_condition', 'diff'), ('frequency_sound_1', 1000), ('modulate', 'higher'), ('mod_hz', 2), ('frequency_sound_2', 1002), ('freq_cond', 3)])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
      Routine get_ready
      Routine fixation
      Routine trial
      Routine response
    LoopTerminator trials_diff
    Routine end_block
  LoopTerminator block_diff
  Routine final
