PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.1.4
  Window size (pixels) = [1440, 900]
  expName = lab8
  keyboardBackend = ioHub
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Routines
  Routine trial
    SoundComponent sound_1
      saveStartStop = False
      sound [set every repeat] = $frequency_sound_1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $tone_time
      volume = .05
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    SoundComponent sound_2
      saveStartStop = False
      sound [set every repeat] = $frequency_sound_2
      startVal [time (s)] = $tone_time + tone_delay
      stopVal [duration (s)] = $tone_time
      volume = .05
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  Routine setup
    CodeComponent code_setup
      Code Type = Auto->JS
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      Begin Experiment:
        tone_time = 1
        tone_delay = .5
        fix_time = .5

        trial_n = 1
        block_n = 1
        block_count = 1

        total_accuracy_0hz = [0] * 7
        total_accuracy_2hz = [0] * 7
        total_accuracy_5hz = [0] * 7
        total_accuracy_10hz = [0] * 7

        trial_count_0hz = [0] * 7
        trial_count_2hz = [0] * 7
        trial_count_5hz = [0] * 7
        trial_count_10hz = [0] * 7

        win.mouseVisible = False
  Routine final
    TextComponent end_text
      letterHeight = 0.05
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Results:
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    CodeComponent code_end
      Code Type = Auto->JS
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      Begin Routine:
        msg_0 = 'Base Frequency\n\n'
        msg_1 = 'Same \n\n'
        msg_2 = 'Different (2 Hz) \n\n'
        msg_3 = 'Different (5 Hz) \n\n'
        msg_4 = 'Different (10 Hz) \n\n'

        base_freqs = [250, 500, 1000, 2000, 4000, 6000, 8000]
        for i in range(7):
            msg_0 += f"{base_freqs[i]} Hz:\n"

        for i in range(7):
            msg_1 += f"{round((total_accuracy_0hz[i])/(trial_count_0hz[i]), 2)}\n"
            thisExp.addData(f"Base Frequency {base_freqs[i]} total_accuracy_0hz", round((total_accuracy_0hz[i])/(trial_count_0hz[i]), 2))

        for i in range(7):
            msg_2 += f"{round((total_accuracy_2hz[i])/(trial_count_2hz[i]), 2)}\n"
            thisExp.addData(f"Base Frequency {base_freqs[i]} total_accuracy_2hz", round((total_accuracy_2hz[i])/(trial_count_2hz[i]), 2))

        for i in range(7):
            msg_3 += f"{round((total_accuracy_5hz[i])/(trial_count_5hz[i]), 2)}\n"
            thisExp.addData(f"Base Frequency {base_freqs[i]} total_accuracy_5hz", round((total_accuracy_5hz[i])/(trial_count_5hz[i]), 2))

        for i in range(7):
            msg_4 += f"{round((total_accuracy_10hz[i])/(trial_count_10hz[i]), 2)}\n"
            thisExp.addData(f"Base Frequency {base_freqs[i]} total_accuracy_10hz", round((total_accuracy_10hz[i])/(trial_count_10hz[i]), 2))
    TextComponent end_text_0
      letterHeight = 0.03
      pos = (-.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_0
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    TextComponent end_text_2
      letterHeight = 0.03
      pos = (-.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_2
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    TextComponent end_text_3
      letterHeight = 0.03
      pos = (.1, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_3
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    TextComponent end_text_4
      letterHeight = 0.03
      pos = (.4, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_4
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    TextComponent end_text_6
      letterHeight = 0.05
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Record this result.

        Press SPACE when you are ready to end the experiment.
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 120
      store = nothing
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  Routine fixation
    PolygonComponent fixation_stim
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fix_time
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  Routine instructions
    TextComponent instruct_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        During this experiment, you will hear two tones. Your job is to identify if the tones are the same or different. The tones will be presented quickly and might be difficult to hear. Please make sure that you have the sound on your computer turned on.

        You will first start the trial by pressing the spacebar. During the trial, you will first see a cross in the center of the screen. This is your warning that the tones are about to appear and that you should get ready. Then, you will hear a tone. There will be a brief delay and you will then hear a second tone. Finally, you will see the response screen. When you see the response screen, press the LEFT arrow if the tones are the SAME and the RIGHT arrow if the tones are different. You will then press the spacebar again to start a new trial.

        Let's try a few practice trials.

        Press SPACE to begin the practice.
    KeyboardComponent key_resp_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine feedback
    TextComponent feedback_text1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_msg
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    TextComponent feedback_text2
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp_feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_practice
    TextComponent end_practice_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished the practice!

        Now it's time to begin the real experimental trials. These will be exactly the same as what you just practiced, but you will no longer receive feedback.

        You will see a screen encouraging you to take a break at several times during the experiment. When you have completed all trials, you will see your accuracy results. Record these results and report them to your instructor.

        If you have any questions, please ask your instructor now.

        Press SPACE when you are ready to begin.
    KeyboardComponent key_resp_end_prac
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        total_accuracy_0hz = [0] * 7
        total_accuracy_2hz = [0] * 7
        total_accuracy_5hz = [0] * 7
        total_accuracy_10hz = [0] * 7

        trial_count_0hz = [0] * 7
        trial_count_2hz = [0] * 7
        trial_count_5hz = [0] * 7
        trial_count_10hz = [0] * 7
  Routine end_block
    CodeComponent block_message
      Code Type = Auto->JS
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      Begin Routine:
        block_msg = "You have reached the end of block " + str(block_count) + " of " + str(block_n) + "."
      End Routine:
        block_count += 1
    TextComponent block_message1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_msg
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    TextComponent block_message2
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please take a short break.

        Press SPACE when you are ready to continue.
    KeyboardComponent key_resp_block_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_setup
    CodeComponent code_trial_setup
      Code Type = Auto->JS
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      Begin Routine:
        stim_numbers = []
        stim_letters = []
        trial_stim = []

        for i in range(2):
            stim_letter = random.choice(string.ascii_uppercase)
            while (stim_letter == "I") or (stim_letter == "O"):
                stim_letter = random.choice(string.ascii_uppercase)
            while stim_letter in stim_letters[-2:]:
                stim_letter = random.choice(string.ascii_uppercase)
            stim_letters.append(stim_letter)

        for i in range(14):
            stim_number = random.randint(2,9)
            while stim_number in stim_numbers[-4:]:
                stim_number = random.randint(2,9)
            stim_numbers.append(stim_number)

        trial_stim = stim_numbers

        trial_stim.insert((t1_position - 1), stim_letters[0])
        trial_stim.insert((t1_position + lag_cond - 1), stim_letters[1])

        i = 0
  Routine response
    CodeComponent code_response
      Code Type = Auto->JS
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      Begin Routine:
        if modulate == "yes":
            corr_ans = "right"
            corr_resp = "different"
        elif modulate == "no":
            corr_ans = "left"
            corr_resp = "same"
      End Routine:
        feedback_msg = ''
        if key_resp.corr == 1:
            feedback_msg = f"Correct! The tones were {corr_resp.upper()}."
        else:
            feedback_msg = f"Incorrect. The tones were {corr_resp.upper()}. The correct answer was {corr_ans.upper()}."

        if (modulate == "no"):
            trial_count_0hz[freq_cond-1] += 1
            if (key_resp.corr == 1):
                total_accuracy_0hz[freq_cond-1] += 1
        elif (mod_hz == 2):
            trial_count_2hz[freq_cond-1] += 1
            if (key_resp.corr == 1):
                total_accuracy_2hz[freq_cond-1] += 1
        elif (mod_hz == 5):
            trial_count_5hz[freq_cond-1] += 1
            if (key_resp.corr == 1):
                total_accuracy_5hz[freq_cond-1] += 1
        elif (mod_hz == 10):
            trial_count_10hz[freq_cond-1] += 1
            if (key_resp.corr == 1):
                total_accuracy_10hz[freq_cond-1] += 1
    KeyboardComponent key_resp
      allowedKeys = 'right','left'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text
      letterHeight = 0.05
      pos = (.25, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        >
        DIFFERENT
    TextComponent text_3
      letterHeight = 0.05
      pos = (-.25, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        <
        SAME
    TextComponent text_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ?
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  Routine get_ready
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Ready?

        Press SPACE to start.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine setup
  Routine instructions
  LoopInitiator trials_practice loopType="TrialHandler"
    conditionsFile = freq_conds_prac.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('frequency_sound_1', 250), ('modulate', 'yes'), ('mod_hz', 2), ('frequency_sound_2', 252), ('freq_cond', 1)]),
      OrderedDict([('frequency_sound_1', 500), ('modulate', 'yes'), ('mod_hz', 2), ('frequency_sound_2', 502), ('freq_cond', 2)]),
      OrderedDict([('frequency_sound_1', 6000), ('modulate', 'yes'), ('mod_hz', 10), ('frequency_sound_2', 6010), ('freq_cond', 3)]),
      OrderedDict([('frequency_sound_1', 8000), ('modulate', 'yes'), ('mod_hz', 2), ('frequency_sound_2', 8002), ('freq_cond', 4)]),
      OrderedDict([('frequency_sound_1', 250), ('modulate', 'no'), ('mod_hz', 0), ('frequency_sound_2', 250), ('freq_cond', 1)]),
      OrderedDict([('frequency_sound_1', 1000), ('modulate', 'no'), ('mod_hz', 0), ('frequency_sound_2', 1000), ('freq_cond', 2)]),
      OrderedDict([('frequency_sound_1', 2000), ('modulate', 'no'), ('mod_hz', 0), ('frequency_sound_2', 2000), ('freq_cond', 3)]),
      OrderedDict([('frequency_sound_1', 6000), ('modulate', 'no'), ('mod_hz', 0), ('frequency_sound_2', 6000), ('freq_cond', 4)])]
    Routine get_ready
    Routine fixation
    Routine trial
    Routine response
    Routine feedback
  LoopTerminator trials_practice
  Routine end_practice
  LoopInitiator block loopType="TrialHandler"
    loopType = random
    nReps = block_n
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = freq_conds.csv
      loopType = random
      nReps = trial_n
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      conditions:
        [OrderedDict([('frequency_sound_1', 250), ('modulate', 'yes'), ('mod_hz', 2), ('frequency_sound_2', 252), ('freq_cond', 1)]),
        OrderedDict([('frequency_sound_1', 250), ('modulate', 'yes'), ('mod_hz', 5), ('frequency_sound_2', 255), ('freq_cond', 1)]),
        OrderedDict([('frequency_sound_1', 250), ('modulate', 'yes'), ('mod_hz', 10), ('frequency_sound_2', 260), ('freq_cond', 1)]),
        OrderedDict([('frequency_sound_1', 500), ('modulate', 'yes'), ('mod_hz', 2), ('frequency_sound_2', 502), ('freq_cond', 2)]),
        OrderedDict([('frequency_sound_1', 500), ('modulate', 'yes'), ('mod_hz', 5), ('frequency_sound_2', 505), ('freq_cond', 2)]),
        OrderedDict([('frequency_sound_1', 500), ('modulate', 'yes'), ('mod_hz', 10), ('frequency_sound_2', 510), ('freq_cond', 2)]),
        OrderedDict([('frequency_sound_1', 1000), ('modulate', 'yes'), ('mod_hz', 2), ('frequency_sound_2', 1002), ('freq_cond', 3)]),
        OrderedDict([('frequency_sound_1', 1000), ('modulate', 'yes'), ('mod_hz', 5), ('frequency_sound_2', 1005), ('freq_cond', 3)]),
        OrderedDict([('frequency_sound_1', 1000), ('modulate', 'yes'), ('mod_hz', 10), ('frequency_sound_2', 1010), ('freq_cond', 3)]),
        OrderedDict([('frequency_sound_1', 2000), ('modulate', 'yes'), ('mod_hz', 2), ('frequency_sound_2', 2002), ('freq_cond', 4)]),
        OrderedDict([('frequency_sound_1', 2000), ('modulate', 'yes'), ('mod_hz', 5), ('frequency_sound_2', 2005), ('freq_cond', 4)]),
        OrderedDict([('frequency_sound_1', 2000), ('modulate', 'yes'), ('mod_hz', 10), ('frequency_sound_2', 2010), ('freq_cond', 4)])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
      Routine get_ready
      Routine fixation
      Routine trial
      Routine response
    LoopTerminator trials
    Routine end_block
  LoopTerminator block
  Routine final
