PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.1.4
  Window size (pixels) = [1440, 900]
  expName = lab8
  keyboardBackend = ioHub
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Routines
  Routine setup
    CodeComponent code_setup
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        tone_time = .3
        fix_time = .5

        trial_n = 6
        block_n = 5
        block_count = 1

        sound_tones = {1: "C",
                       2: "D",
                       3: "E",
                       4: "F",
                       5: "G",
                       6: "A",
                       7: "B"}

        win.mouseVisible = False

        total_accuracy_same = 0
        total_accuracy_contour = 0
        total_accuracy_interval = 0
        trial_count_same = 0
        trial_count_contour = 0
        trial_count_interval = 0
  Routine final
    CodeComponent code_end
      Code Type = Auto->JS
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      Begin Routine:
        msg_1 = f'Same\n {round((total_accuracy_same)/(trial_count_same), 2)}'
        msg_2 = f'Different (Contour)\n {round((total_accuracy_contour)/(trial_count_contour), 2)}'
        msg_3 = f'Different (Interval)\n {round((total_accuracy_interval)/(trial_count_interval), 2)}'

        thisExp.addData(f"total_accuracy_same", round((total_accuracy_same)/(trial_count_same), 2))
        thisExp.addData(f"total_accuracy_contour", round((total_accuracy_contour)/(trial_count_contour), 2))
        thisExp.addData(f"total_accuracy_interval", round((total_accuracy_interval)/(trial_count_interval), 2))
    TextComponent end_text
      letterHeight = 0.05
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Results:
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    TextComponent end_text_1
      letterHeight = 0.03
      pos = (-.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_1
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    TextComponent end_text_2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_2
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    TextComponent end_text_3
      letterHeight = 0.03
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_3
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    TextComponent end_text_6
      letterHeight = 0.05
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Record this result.

        Press SPACE when you are ready to end the experiment.
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 120
      store = nothing
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  Routine fixation
    CodeComponent code_trial_setup
      Code Type = Auto->JS
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      Begin Routine:
        stim_tone_1 = []
        stim_ints = []
        stim_tone_2 = []


        for i in range(5):
            stim_int = random.randint(1,7)
            while [stim_int] == stim_ints[-1:]:
                stim_int = random.randint(1,7)
            stim_ints.append(stim_int)
            stim_tone_1.append(sound_tones[stim_int])

        stim_tone_2 = stim_tone_1.copy()

        tone_change = random.randint(1,4)

        if (change == "yes") and (change_condition == "contour"):
            contour_change = random.choice(["1", "-1"])
            new_tone = stim_ints[tone_change] + int(contour_change)
            while (new_tone == 8) or (new_tone == 0):
                tone_change = random.randint(1,4)
                new_tone = stim_ints[tone_change] + int(contour_change)
            stim_tone_2[tone_change] = sound_tones[new_tone]
        elif(change == "yes") and (change_condition == "interval"):
            note_1 = stim_ints[tone_change]
            note_2 = stim_ints[tone_change-1]
            if note_1 > note_2:
                note_3 = stim_ints[tone_change] + 1
            elif note_1 < note_2:
                note_3 = stim_ints[tone_change] - 1
            while (note_3 == 8) or (note_3 == 0):
                tone_change = random.randint(1,4)
                note_1 = stim_ints[tone_change]
                note_2 = stim_ints[tone_change-1]
                if note_1 > note_2:
                    note_3 = stim_ints[tone_change] + 1
                elif note_1 < note_2:
                    note_3 = stim_ints[tone_change] - 1
            stim_tone_2[tone_change] = sound_tones[note_3]
    PolygonComponent fixation_stim
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fix_time
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  Routine instructions
    TextComponent instruct_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        During this experiment, you will hear two melodies consisting of five tones. Your job is to identify if the melodies are the same or different. Please make sure that you have the sound on your computer turned on.

        You will first start the trial by pressing the spacebar. During the trial, you will first see a cross in the center of the screen. This is your warning that the melodies are about to appear and that you should get ready. Then, you will hear the first melody. There will be a brief delay and you will then hear the second melody. Finally, you will see the response screen. When you see the response screen, press the LEFT arrow if the melodies are the SAME and the RIGHT arrow if the melodies are different.

        Let's try a few practice trials.

        Press SPACE to begin the practice.
    KeyboardComponent key_resp_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine feedback
    TextComponent feedback_text1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_msg
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    TextComponent feedback_text2
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp_feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_practice
    TextComponent end_practice_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished the practice!

        Now it's time to begin the real experimental trials. These will be exactly the same as what you just practiced, but you will no longer receive feedback.

        You will see a screen encouraging you to take a break at several times during the experiment. When you have completed all trials, you will see your accuracy results. Record these results and report them to your instructor.

        If you have any questions, please ask your instructor now.

        Press SPACE when you are ready to begin.
    KeyboardComponent key_resp_end_prac
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = nothing
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        total_accuracy_same = 0
        total_accuracy_contour = 0
        total_accuracy_interval = 0

        trial_count_same = 0
        trial_count_contour = 0
        trial_count_interval = 0
  Routine end_block
    CodeComponent block_message
      Code Type = Auto->JS
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      Begin Routine:
        block_msg = "You have reached the end of block " + str(block_count) + " of " + str(block_n) + "."
      End Routine:
        block_count += 1
    TextComponent block_message1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_msg
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    TextComponent block_message2
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please take a short break.

        Press SPACE when you are ready to continue.
    KeyboardComponent key_resp_block_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine response
    CodeComponent code_response
      Code Type = Auto->JS
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      Begin Routine:
        if change == "yes":
            corr_ans = "right"
            corr_resp = "different"
        elif change == "no":
            corr_ans = "left"
            corr_resp = "same"
      End Routine:
        feedback_msg = ''
        if key_resp.corr == 1:
            feedback_msg = f"Correct! The melodies were {corr_resp.upper()}."
        else:
            feedback_msg = f"Incorrect. The melodies were {corr_resp.upper()}. The correct answer was {corr_ans.upper()}."


        if change == "no":
            total_accuracy_same += key_resp.corr
            trial_count_same += 1
        elif change_condition == "contour":
            total_accuracy_contour += key_resp.corr
            trial_count_contour += 1
        elif change_condition == "interval":
            total_accuracy_interval += key_resp.corr
            trial_count_interval += 1
    KeyboardComponent key_resp
      allowedKeys = 'right','left'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text
      letterHeight = 0.05
      pos = (.25, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        >
        DIFFERENT
    TextComponent text_3
      letterHeight = 0.05
      pos = (-.25, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        <
        SAME
    TextComponent text_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ?
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  Routine get_ready
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Ready?

        Press SPACE to start.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_setup_2
  Routine trial_1
    SoundComponent sound_0
      saveStartStop = False
      sound [set every repeat] = $stim_tone_1[0]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $tone_time
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    SoundComponent sound_1
      saveStartStop = False
      sound [set every repeat] = $stim_tone_1[1]
      startVal [condition] = $sound_0.status==FINISHED
      stopVal [duration (s)] = $tone_time
      syncScreenRefresh = False
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    SoundComponent sound_2
      saveStartStop = False
      sound [set every repeat] = $stim_tone_1[2]
      startVal [condition] = $sound_1.status==FINISHED
      stopVal [duration (s)] = $tone_time
      syncScreenRefresh = False
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    SoundComponent sound_3
      saveStartStop = False
      sound [set every repeat] = $stim_tone_1[3]
      startVal [condition] = $sound_2.status==FINISHED
      stopVal [duration (s)] = $tone_time
      syncScreenRefresh = False
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    SoundComponent sound_4
      saveStartStop = False
      sound [set every repeat] = $stim_tone_1[4]
      startVal [condition] = $sound_3.status==FINISHED
      stopVal [duration (s)] = $tone_time
      syncScreenRefresh = False
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    TextComponent text_8
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $sound_4.status==FINISHED
      text = Melody 1
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  Routine delay
    TextComponent text_7
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine trial_2
    SoundComponent sound_5
      saveStartStop = False
      sound [set every repeat] = $stim_tone_2[0]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $tone_time
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    SoundComponent sound_6
      saveStartStop = False
      sound [set every repeat] = $stim_tone_2[1]
      startVal [condition] = $sound_5.status==FINISHED
      stopVal [duration (s)] = $tone_time
      syncScreenRefresh = False
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    SoundComponent sound_7
      saveStartStop = False
      sound [set every repeat] = $stim_tone_2[2]
      startVal [condition] = $sound_6.status==FINISHED
      stopVal [duration (s)] = $tone_time
      syncScreenRefresh = False
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    SoundComponent sound_8
      saveStartStop = False
      sound [set every repeat] = $stim_tone_2[3]
      startVal [condition] = $sound_7.status==FINISHED
      stopVal [duration (s)] = $tone_time
      syncScreenRefresh = False
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    SoundComponent sound_9
      saveStartStop = False
      sound [set every repeat] = $stim_tone_2[4]
      startVal [condition] = $sound_8.status==FINISHED
      stopVal [duration (s)] = $tone_time
      syncScreenRefresh = False
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    TextComponent text_6
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $sound_9.status==FINISHED
      text = Melody 2
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Flow
  Routine setup
  Routine instructions
  LoopInitiator trials_practice loopType="TrialHandler"
    conditionsFile = tone_conds.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('change', 'yes'), ('change_condition', 'contour')]),
      OrderedDict([('change', 'yes'), ('change_condition', 'interval')]),
      OrderedDict([('change', 'no'), ('change_condition', 'no')])]
    Routine fixation
    Routine trial_1
    Routine delay
    Routine trial_2
    Routine response
    Routine feedback
  LoopTerminator trials_practice
  Routine end_practice
  LoopInitiator blocks loopType="TrialHandler"
    loopType = random
    nReps = block_n
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = tone_conds.csv
      loopType = random
      nReps = trial_n
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      conditions:
        [OrderedDict([('change', 'yes'), ('change_condition', 'contour')]),
        OrderedDict([('change', 'yes'), ('change_condition', 'interval')]),
        OrderedDict([('change', 'no'), ('change_condition', 'no')])]
      Routine fixation
      Routine trial_1
      Routine delay
      Routine trial_2
      Routine response
    LoopTerminator trials
    Routine end_block
  LoopTerminator blocks
  Routine final
